<?xml version="1.0"?>
<ReactionScheme>

  
  <!-- IP3R Model based on Fraiman D, Dawson SP (2004) A model of IP3 receptor with a luminal
       calcium binding site: stochastic simulations and analysis. Cell
       Calcium 35: 403-413, 2004 -->
  
  <!-- Receptor States:
       IP3R  state
       IP3RO  state
       IP3RIP3  bound IP3R
       IP3RC  bound IP3R
       IP3RC2
       IP3RC3
       IP3RC4
       
  -->
  <!-- you can specify the units of the diffusion constant. If they are not specified they are assumed to be micron^2/second, (microns written "mu" here) it should understand microns, mm, and m for distances and seconds and ms for times -->
  <!-- This code is implemented CaMKII_bimols Rns -0.44, 0.28, 0.088. Fix 3 products 2rxns break down to 2nd order rxn : LbARG/Ip35P1P2 -->
  <!-- last rxn of Ip35p1p2 was wrong reactant:fixed on Aug,8th,2008
   Chosen katp=1 sec(not 10 sec) is enough   -->
  <!-- Suggested by avrama Ca kdiff=600 for helping fast decay on Feb.24th 2009-->

  <!--TODO add bAR desensitization!-->
  <Specie name="Ca" id="Ca" kdiff="174.3" kdiffunit="mu2/s" />
  <Specie name="CaOut" id="CaOut" kdiff="3." kdiffunit="mu2/s" />
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="CaOutERLeak" id="CaOutERLeak" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="LeakToER" id="LeakToER" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s" />
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s" />
  
  <Specie name="pmca" id="pmca" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="pmcaCa" id="pmcaCa" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s" />
 
  <Specie name="CaER" id="CaER" kdiff="0." kdiffunit="mu2/s"/>
  
  <Specie name="CaERLeak" id="CaERLeak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="SERCA" id="SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_Ca" id="SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_Ca2" id="SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>

  
  <!--calreticulin-->
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>


  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s" />
  <!-- -->
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s" />
  <!--Calmodulin-->
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s" />
 
  <!-- 2 Ca bound Calmodulin-->
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s" />
  <!-- 4 Ca bound Calmodulin-->
  <!-- -->
  <Specie name="CK"                                  id="CK"                    kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="CKp"                                 id="CKp"                   kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa4"                            id="CKCaMCa4"              kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa4"                           id="CKpCaMCa4"             kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="PP1"                                 id="PP1"               kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="CKpPP1"                              id="CKpPP1"            kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa4PP1"                        id="CKpCaMCa4PP1"      kdiff="0"    kdiffunit="mu2/s"/>

  
  <Specie name="PP2B"           id="PP2B"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM"        id="PP2BCaM"       kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa2C"    id="PP2BCaMCa2C"   kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa2N"    id="PP2BCaMCa2N"   kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa4"     id="PP2BCaMCa4"    kdiff="0"     kdiffunit="mu2/s"/>
  




  
  <Specie name="GluBuf" id="GluBuf" kdiff="1" kdiffunit="mu2/s" />

  <!-- Add mGluRs from Blackwell's model -->
  <Specie name="Glu"            id="Glu"           kdiff="100"   kdiffunit="mu2/s"/>
  <Specie name="GluOut"         id="GluOut"        kdiff="100"   kdiffunit="mu2/s"/>
  <Specie name="MgluR"          id="MgluR"         kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluR"       id="GluMgluR"      kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluRdesens" id="GluMgluRdesens" kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="MgluRGq"        id="MgluRGq"       kdiff="0"     kdiffunit="mu2/s"/> 
  <Specie name="Gqabg"          id="Gqabg"         kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluRGq"     id="GluMgluRGq"    kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GqaGTP"         id="GqaGTP"        kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GqaGDP"         id="GqaGDP"        kdiff="0"     kdiffunit="mu2/s"/>  

  <Specie name="Plc"             id="Plc"             kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcCa"           id="PlcCa"           kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcCaGqaGTP"     id="PlcCaGqaGTP"     kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcGqaGTP"       id="PlcGqaGTP"       kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="Pip2"            id="Pip2"            kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcCaPip2"       id="PlcCaPip2"       kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcCaGqaGTPPip2" id="PlcCaGqaGTPPip2"  kdiff="0"    kdiffunit = "mu2/s"/>
 
  
  <Specie name="PIkinase"      id="PIkinase"      kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="Ip3degPIk"     id="Ip3degPIk"   kdiff="0"    kdiffunit = "mu2/s"/>
  
  <Specie name="Ip3degrad"     id="Ip3degrad"           kdiff="10.6"    kdiffunit = "mu2/s"/>

  <Specie name="IP3R"          id="IP3R"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RIP3"          id="IP3RIP3"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RO"           id="IP3RO"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC"           id="IP3RC"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC2"                  id="IP3RC2"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC3"                  id="IP3RC3"           kdiff="0"     kdiffunit="mu2/s"/>

  <Specie name="IP3RC4"          id="IP3RC4"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="Ip3"            id="Ip3"           kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="Dag"       id="Dag"   kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="DagK"           id="DagK"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="DagKdag"        id="DagKdag"       kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="PA"             id="PA"            kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="2agDegrad"      id="2agDegrad"     kdiff="88.6"  kdiffunit="mu2/s"/>
  <Specie name="Dgl"            id="Dgl"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="pDgl"           id="pDgl"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="CaDgl"          id="CaDgl"         kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="CapDgl"          id="CapDgl"         kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="DagCaDgl"       id="DagCaDgl"      kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="DagCapDgl"       id="DagCapDgl"      kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="2ag"            id="2ag"           kdiff="88.6"  kdiffunit="mu2/s"/>
  <Specie name="Pkc"            id="Pkc"           kdiff="14"    kdiffunit="mu2/s"/>
  <Specie name="PkcCa"          id="PkcCa"         kdiff="14"    kdiffunit="mu2/s"/>
  <Specie name="PkcCaDag"       id="PkcCaDag"      kdiff="0"     kdiffunit="mu2/s"/>

  <!--Hindered cytoplasmic diffusion of
	  inositol trisphosphate restricts its cellular range of
	  action     George D. Dickinson1,*, Kyle L. Ellefsen1,
	  Silvina Ponce Dawson2, John E. Pearson3, and Ian Parker1,4
	  Sci signalling -->
  <!--*************************************************************************
  Now, the reactions themselves   SAME means params are same in both files
  **************************************************************************-->
  <!--I. *********** Ca pump and buffer rxns  ************* -->
  <!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
  <Reaction name = "Ca_pump1a" id="Ca_pump1a">
<Reactant specieID="Ca"/>
<Reactant specieID="pmca"/>
<Product specieID="pmcaCa"/>

<forwardRate>0.5e-4</forwardRate>
<reverseRate>0.007</reverseRate>
  </Reaction>

  <!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
  <Reaction name = "Ca_pump1b" id="Ca_pump1b">
<Reactant specieID="pmcaCa"/>
<Product specieID="pmca"/>
<Product specieID="CaOut"/>

<forwardRate>0.0035</forwardRate>
<reverseRate>0</reverseRate>
  </Reaction>

  <!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
  <Reaction name = "Ca_pump2a" id="Ca_pump2a">
<Reactant specieID="Ca"/>
<Reactant specieID="ncx"/>
<Product specieID="ncxCa"/>

<forwardRate>1.68e-5</forwardRate>
<reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
  <Reaction name = "Ca_pump2b" id="Ca_pump2b">
<Reactant specieID="ncxCa"/>
<Product specieID="ncx"/>
<Product specieID="CaOut"/>

<forwardRate>0.0056</forwardRate>
<reverseRate>0</reverseRate>
  </Reaction>
  <!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
  <Reaction name = "Ca_leak1" id="Ca_leak1">
<Reactant specieID="CaOut"/>
<Reactant specieID="Leak"/>
<Product specieID="CaOutLeak"/>

<forwardRate>1.5e-6</forwardRate>
<reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak2" id="Ca_leak2">
<Reactant specieID="CaOutLeak"/>
<Product specieID="Ca"/>
<Product specieID="Leak"/>

<forwardRate>1.1e-3</forwardRate>
<reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name = "Ca_leak_toER" id="Ca_leak_toER">
<Reactant specieID="CaOut"/>
<Reactant specieID="LeakToER"/>
<Product specieID="CaOutERLeak"/>

<forwardRate>1.5e-8</forwardRate>
<reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak_toER2" id="Ca_leak_toER2">
<Reactant specieID="CaOutERLeak"/>
<Product specieID="CaER"/>
<Product specieID="LeakToER"/>

<forwardRate>1.1e-3</forwardRate>
<reverseRate>0</reverseRate>
  </Reaction>

  <!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
  <Reaction name = "Ca_buffer" id="Ca_Buffer">
<Reactant specieID="Ca"/>
<Reactant specieID="Calbin"/>
<Product specieID="CalbinC"/>

<forwardRate>2.8e-5</forwardRate>
<reverseRate>0.0196</reverseRate>
  </Reaction>
   <!-- fixed immobile buffer-->
<Reaction name = "Ca_fixedbuffer" id="Ca_fixedBuffer">
<Reactant specieID="Ca"/>
<Reactant specieID="fixedbuffer"/>
<Product specieID="fixedbufferCa"/>
<forwardRate>0.004e-1</forwardRate>
<reverseRate>20.0</reverseRate>
<Q10>0.2</Q10>
</Reaction>
  
<!-- CaM, CaMCa4 and PP2B Binding -->
<!--1) CaM  + 2Ca
<-> CaMCa2 -->
<!--This is the C site-->
<Reaction name="CaMC_bind" id="CaMC_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="CaMCa2C" />
  <forwardRate>6e-6</forwardRate>
  <reverseRate>9.1e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--2) CaMCa2  + 2Ca
<-> CaMCa4 -->
<!--This is the N-site-->
<Reaction name="CaMCa2C_bind" id="CaMCa2C_bind">
  <Reactant specieID="CaMCa2C" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="CaMCa4" />
  <forwardRate>0.1e-3</forwardRate>
  <reverseRate>1000e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--1B) CaM  + 2Ca <-> CaMCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMN_bind" id="CaMN_bind">
	<Reactant specieID="CaM"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CaMCa2N  + 2Ca <-> CaMCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMCa2N_bind" id="CaMCa2N_bind">
	<Reactant specieID="CaMCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>

<!-- Kubota, Putkey, Waxham, 2007, Biophys J, 92:3848-3859, constants
 k5 and k_5-->
<!--2a) CaM  + Ng
<-> NgCaM -->
<!--I step of the Neurogranin -->
<Reaction name="NgCaM_bind" id="NgCaM_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="Ng" />
  <Product specieID="NgCaM" />
  <forwardRate>28.e-6</forwardRate>
  <reverseRate>36.e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!--1) CaMCa4 + CK <-> CKCaMCa4  -->
    <Reaction name = "CK bind" id="CK-CaM_bind">
        <Reactant specieID="CaMCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCaMCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.5e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<!--2a) 2 CKCaMCa4  <-> 1  CKCaMCa4 + 1 CKpCaMCa4 -->
    <Reaction name = "CKCaM bind" id="CKCaM_pow2">
        <Reactant specieID="CKCaMCa4"  power="2"        />
        <Product  specieID="CKCaMCa4"          />
        <Product  specieID="CKpCaMCa4"           />

        <forwardRate> 3.83119676007e-10 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2b)  3 CKCaMCa4  <-> 2 CKCaMCa4 + 1 CKpCaMCa4 -->
    <Reaction name = "CKCaM bind" id="CKCaM_pow3">
        <Reactant specieID="CKCaMCa4"  power="3"        />
        <Product  specieID="CKCaMCa4"  power="2"         />
        <Product  specieID="CKpCaMCa4"           />

        <forwardRate> 3.55792141502e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2c) 4 CKCaMCa4  <-> 3  CKCaMCa4 + 1 CKpCaMCa4 -->
    <Reaction name = "CKCaM bind" id="CKCaM_pow4">
        <Reactant specieID="CKCaMCa4"  power="4"        />
        <Product  specieID="CKCaMCa4"   power="3"         />
        <Product  specieID="CKpCaMCa4"           />

        <forwardRate> 2.23694832822e-16 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2d)  2 CKpCaMCa4 + 2 CKCaMCa4 <-> 3 CKpCaMCa4 + 1 CKCaMCa4-->
    <Reaction name = "CKCaM bind" id="CK2_CKpCaM_pow2">
        <Reactant specieID="CKpCaMCa4"  power="2"        />
        <Reactant specieID="CKCaMCa4"  power="2"        />
        <Product  specieID="CKCaMCa4"           />
        <Product  specieID="CKpCaMCa4" power="3"         />

        <forwardRate> 1.10450093247e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2e)  2 CKpCaMCa4 + 2 CKCaMCa4 <-> 3 CKpCaMCa4 + 1 CKCaMCa4-->
    <Reaction name = "CKCaM bind" id="CK1_CKpCaM_pow2">
        <Reactant specieID="CKpCaMCa4"  power="2"        />
        <Reactant specieID="CKCaMCa4"         />
        <Product  specieID="CKpCaMCa4" power="3"         />

        <forwardRate> 3.0330636368e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2f)  2 CKpCaMCa4 + 2 CKCaMCa4 <-> 3 CKpCaMCa4 + 1 CKCaMCa4-->
    <Reaction name = "CKCaM bind" id="CK2_CKpCaM_pow1">
        <Reactant specieID="CKpCaMCa4"   power="2"         />
        <Reactant specieID="CKCaMCa4"     power="2"     />
        <Product  specieID="CKpCaMCa4" power="3"         />
        <Product  specieID="CKCaMCa4"          />

        <forwardRate> 2.39399544094e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

    <!-- CKpCaMCa4 <-> CKp + CaMCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCaMCa4"              />
        <Product  specieID="CaMCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

<!-- Km=5.1 uM  from foulkes et. al.,  et al., Eur. JBiochem.1983 132(309-313))
     Vmax=5.7 umol/min gives kcat=3.5 sec-1 & kb=14 sec-1 -->
    <!-- kf=0.000039,kb=0.34,kcat=0.086 /sec for CKp only from Myungs paper 2010 PloS -->
    <!-- kf=0.6e-9,kb=0.34e-3,kcat=0.086e-3 /msec for CKp and CKpCaM from Myungs Stoch sims-->
   <!-- CKp + PP1 <-> CKpPP1 --> 
    <Reaction name = "CKp_bind" id="CKp_bind">
	<Reactant specieID="CKp"/>
        <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>

	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <!-- CKpPP1 -> PP1 + CK -->
    <Reaction name = "CKpPP1_reac" id="CKpPP1_reac">
	<Reactant specieID="CKpPP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CK"/>

	<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

  
   <!-- CKpCaMCa4 + PP1 <-> CKpCaMCa4PP1 -->
    <Reaction name = "CKpCaMPP1_bind" id="CKpCaMPP1_bind">
	<Reactant specieID="CKpCaMCa4"/>
        <Reactant specieID="PP1"/>
`	<Product specieID="CKpCaMCa4PP1"/>

	
    <forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <!-- CKpCaMCa4PP1 -> PP1 + CKCaMCa4 -->
    
    <Reaction name = "CKpCaMPP1_reac" id="CKpCaMPP1_reac">
	<Reactant specieID="CKpCaMCa4PP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CKCaMCa4"/>

	<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>



   <Reaction name = "CaM+PP2B--PP2BCaM reac" id="CaM+PP2B--PP2BCaM_id">
        <Reactant specieID="CaM"                    />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCaM"                />

        <forwardRate> 0.0046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
    </Reaction>

    <!--4C) CaMCa2C    +   PP2B     <->  PP2BCaMCa2C (in xpp: k33c=1 k_33c=0.3) -->
    <Reaction name = "CaMCa2C+PP2B--PP2BCaMCa2C reac" id="CaMCa2C+PP2B--PP2BCaMCa2C_id">
        <Reactant specieID="CaMCa2C"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCaMCa2C"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
    </Reaction>

    <!--4N) CaMCa2N    +   PP2B     <->  PP2BCaMCa2N (in xpp: k33c=1 k_33c=0.3) -->
    <Reaction name = "CaMCa2N+PP2B--PP2BCaMCa2N reac" id="CaMCa2N+PP2B--PP2BCaMCa2N_id">
        <Reactant specieID="CaMCa2N"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCaMCa2N"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
    </Reaction>

    <!--5xC) PP2BCaM    +   Ca2      <->  PP2BCaMCa2C -->
    <Reaction name = "PP2BCaM+Ca2--PP2BCaMCa2C reac" id="PP2BCaM+Ca2--PP2BCaMCa2C_id">
        <Reactant specieID="PP2BCaM"                />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCaMCa2C"             />

        <forwardRate> 6.0e-06       </forwardRate>
        <reverseRate> 0.91e-03      </reverseRate>
    </Reaction>

    <!--5xN) PP2BCaM    +   Ca2      <->  PP2BCaMCa2N -->
    <Reaction name = "PP2BCaM+Ca2--PP2BCaMCa2N reac" id="PP2BCaM+Ca2--PP2BCaMCa2N_id">
        <Reactant specieID="PP2BCaM"                />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCaMCa2N"             />

        <forwardRate> 0.1e-03       </forwardRate>
        <reverseRate> 100e-03      </reverseRate>
    </Reaction>

    <!--7x) CaMCa4    +  PP2B     <->  PP2BCaMCa4 -->
    <Reaction name = "CaMCa4+PP2B--PP2BCaMCa4 reac" id="CaMCa4+PP2B--PP2BCaMCa4_id">
        <Reactant specieID="CaMCa4"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCaMCa4"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
    </Reaction>

  <!-- PP2BCaMCa2 +  Ca2     <->  PP2BCaMCa4, either N site or C site -->
    <!--4N) N site binding -->
    <Reaction name = "PP2BCaMCa2C+Ca2--PP2BCaMCa4 reac" id="PP2BCaMCa2+Ca2--PP2BCaMCa4_id">
        <Reactant specieID="PP2BCaMCa2C"             />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCaMCa4"             />

        <forwardRate> 0.1e-03       </forwardRate>
        <reverseRate> 1000e-03      </reverseRate>
    </Reaction>

    <!--4C) C site binding -->
    <Reaction name = "PP2BCaMCa2N+Ca2--PP2BCaMCa4 reac" id="PP2BCaMCa2N+Ca2--PP2BCaMCa4_id">
        <Reactant specieID="PP2BCaMCa2N"            
 />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCaMCa4"             />

        <forwardRate> 6.0e-06       </forwardRate>
        <reverseRate> 9.1e-03      </reverseRate>
    </Reaction>

   <!--PKAc + PP2AB56d    <->  PKAcPP2AB56d    Km=172nM  (in xpp: k27=0.0025 k_27=0.3) -->




<!-- Added by Tuomo -->
<!-- The following reactions from https://senselab.med.yale.edu/modeldb/showmodel.cshtml?model=154967&file=%2fkimetal2013%2fmglu_2AG_reac12mar20desens025bapta.xml#tabs-2 -->

<!-- check thermodynamic equilibrium of next four reactions: NO GOOD.  Decrease affinity of Plc-GaGTP for Ca to 500 -->
<!-- Plc + Ca    <->   PlcCa  6000 nM-->
<!--AB: this is REALLY fast - as fast as CaM binding to calcium.  Might want to slow down both calcium binding steps?
    Yes, by 5x (no change affinity) Nov 30.  Keep affinity of Plc for Ca = 6 uM (low) -->






<!-- CA, Plc, Gq reactions are thermodynamically balanced JJS -->
<Reaction name = "Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
    <Reactant specieID="Ca"           />
    <Reactant specieID="Plc"              />
    <Product  specieID="PlcCa"               />

    <forwardRate> 0.0005e-03   </forwardRate>
    <reverseRate> 1e-03        </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>
 
<!-- Plc + GqaGTP    <->   PlcGqaGTP 1200 nM -->
<!--AB: Falkenburger 2010 uses 0.71e-3 for reverse rate --> 
<!--Kf is 10x lower for Plc - GqaGTP than Jan31 reac -->
<Reaction name = "Plc+GqaGTP--PlcGqaGTP" id="Plc+GqaGTP--PlcGqaGTP">
    <Reactant specieID="GqaGTP"           />
    <Reactant specieID="Plc"              />
    <Product  specieID="PlcGqaGTP"               />

    <forwardRate> 0.0007e-03   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- PlcGqaGTP + Ca    <->   PlcCaGqaGTP  500 nM-->
<Reaction name = "PlcGqaGTP+Ca--PlcCaGqaGTP" id="PlcGqaGTP+Ca--PlcCaGqaGTP">
    <Reactant specieID="Ca"           />
    <Reactant specieID="PlcGqaGTP"              />
    <Product  specieID="PlcCaGqaGTP"               />

    <forwardRate> 0.0025e-03   </forwardRate>
    <reverseRate> 1.0e-03        </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- PlcCa + GqaGTP    <->   PlcCaGqaGTP  100 nM-->
<!--decrease these rates Nov 30 (same affinity) by 3x -->
<!--Kf is 10x lower for Plc - GqaGTP than Jan31 reac --> <!--Tuomo: used rates from Kim et al. 2013-->
<Reaction name = "PlcCa+GqaGTP--PlcCaGqaGTP" id="PlcCa+GqaGTP--PlcCaGqaGTP">
    <Reactant specieID="GqaGTP"           />
    <Reactant specieID="PlcCa"              />
    <Product  specieID="PlcCaGqaGTP"               />

    <forwardRate> 0.0035e-03   </forwardRate>
    <reverseRate>0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

 
   <!-- PlcCa + Pip2    <-> PlcCaPip2    -->
<!--No affinities for Pip2 are found in literature.  ALso, backward rate is very low compared to kcat
This will initiall have small effect on Km, but might slow down IP3 production.
Incraese Kb by 5x to decrease Ip3 production-->
<!-- Decrease Kf by 10x to compensate for 10x inc in Pip2-->
<!-- decrease the next two set of rates 5x overall since too much Pip2 is being hydrolyzed at basal calcium Nov 30 -->
<Reaction name = "PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
    <Reactant specieID="PlcCa"               />
    <Reactant specieID="Pip2"             />
    <Product  specieID="PlcCaPip2"            />

    <forwardRate> 0.05e-06   </forwardRate>
    <reverseRate> 1.8e-3   </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>
  

<!-- PlcCaPip2      <-> PlcCaDag + Ip3 -->  <!--Tuomo: used rate from Blackwell et al. 2018-->
<Reaction name = "PlcCaPip2--PlcCaDag+Ip3" id="PlcCaPip2--PlcCaDag+Ip3">
    <Reactant specieID="PlcCaPip2"            />
    <Product  specieID="PlcCa"               />
    <Product  specieID="Ip3"            />
    <Product  specieID="Dag"            />

    <forwardRate> 0.45e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>
  
<!-- PlcCaGqaGTP + Pip2    <-> PlcCaGqaGTPPip2    -->
<!-- Decrease Kf by 10x to compensate for 10x inc in Pip2-->
<!-- Decrease rates by 2x to maintain 10x enhancement by GqaGTP Nov 30
Increse Kb by 5x to decrease Ip3 production-->
<Reaction name = "PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2" id="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2">
    <Reactant specieID="PlcCaGqaGTP"               />
    <Reactant specieID="Pip2"             />
    <Product  specieID="PlcCaGqaGTPPip2"            />

    <forwardRate>  1.665e-06   </forwardRate>
    <reverseRate>  60e-03   </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>
  
<!-- PlcCaGqaGTPPip2       <-> PlcCaGqaGTPDag + Ip3 -->
<Reaction name = "PlcCaGqaGTPPip2--PlcCaGqaGTPDag+Ip3" id="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+Ip3">
    <Reactant specieID="PlcCaGqaGTPPip2"            />
    <Product  specieID="PlcCaGqaGTP"               />
    <Product  specieID="Dag"            />
    <Product  specieID="Ip3"            />

    <forwardRate> 30e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
</Reaction>

  
<!--  What if PIP2 can only be regenerated from degraded IP3 by membrane molecule.
Thus, initialize PIkinase in the membrane only. 
No idea what these rates should be.  Try different values to obtain equilibirum at basal
These rates interact with PIkinase quantity. Affinity started at 1 uM
Discovered mistake!!! specified PIkinase as product, not reactant!-->

<!--  Ip3    <-> Ip3degrad          Degraded IP3-->
<Reaction name = "Ip3--Ip3degrad" id="Ip3--Ip3degrad">
     <Reactant specieID="Ip3"            />
    <Product  specieID="Ip3degrad"        />

    <forwardRate> 0.66e-03      </forwardRate>
    <reverseRate> 0.0e-03      </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

   <Reaction name = "Ip3degrad + PIkinase -- Ip3degPIkinase" id="PIkinase1">
    <Reactant specieID="Ip3degrad"            />   
    <Reactant specieID="PIkinase"               />
    <Product  specieID="Ip3degPIk"            />

    <forwardRate> 2.0e-6    </forwardRate>
    <reverseRate> 1e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- Initial rate from PI5kinase from Falkenburger, increased to compensate for lower reactant quantity -->
   <Reaction name = "Ip3degPIkinase -- PIP2 + PIkinase" id="PIkinase2">
    <Reactant specieID="Ip3degPIk"            />
    <Product  specieID="PIkinase"               />
    <Product  specieID="Pip2"            />

    <forwardRate> 1e-3  </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>    

<!-- GAP activity - only with Plc bound neither to calcium nor PIP2 -->
<!-- PlcGqaGTP       <-> Plc + Gqabg -->
<!-- When Plc hydrolyzes GqaGTP, the GqaGDP immediately binds to Gqbg to regenerate Gqabg
	 This saves two reactions: not only the rebinding, but also Gqbg dissociating from the mGluR after GqaGTP
	 Given the speed of the rebinding and dissociation in previous models, this is a wise choice
	 However, it prevents depletion of Gqabg! -->
<Reaction name = "PlcGqaGTP--Plc+GqaGDP" id="PlcGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcGqaGTP"            />
    <Product  specieID="Plc"               />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- Gqap activity of PlcCa -->
<Reaction name = "PlcCaGqaGTP--PlcCa+GqaGDP" id="PlcCaGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcCaGqaGTP"            />
    <Product  specieID="PlcCa"               />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

    <!-- Ca + Dgl <-> CaDgl   Dgl is DAG lipase, which produces 2AG -->
    <!-- no source for rates.  Make 400 nM affinity -->
    <Reaction name = "Ca+Dlg--CaDgl" id="Ca+Dlg--CaDgl">
        <Reactant specieID="Ca"            />
        <Reactant specieID="Dgl"               />
        <Product  specieID="CaDgl"            />

        <forwardRate> 0.125e-03     </forwardRate>
        <reverseRate> 50e-03    </reverseRate>
    </Reaction>
 
    <!-- Dag + CaDgl <-> DagCaDgl -->
    <!--affinity dec to 2500 nM   -->
    <Reaction name = "Dag+CaDlg--DagCaDgl" id="Dag+CaDlg--DagCaDgl">
        <Reactant specieID="Dag"            />
        <Reactant specieID="CaDgl"               />
        <Product  specieID="DagCaDgl"            />

        <forwardRate> 0.0005e-03     </forwardRate>
        <reverseRate> 1.0e-03    </reverseRate>
    </Reaction>

    <!-- DagCaDgl <-> CaDgl + 2ag -->
    <!-- kcat from Rosenburger Lipids 2007 -->
    <Reaction name = "DagCaDgl--CaDgl+2ag" id="DagCaDgl--CaDgl+2ag">
        <Reactant specieID="DagCaDgl"            />
        <Product  specieID="CaDgl"               />
        <Product  specieID="2ag"            />

        <forwardRate> 0.25e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>


<!-- Hydrolysis of GqaGTP - slower than GAP activity-->
<Reaction name = "GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
    <Reactant specieID="GqaGTP"            />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   1e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- 1st order regeneration of Gqabg 
avoids the need to generate Gqbg, and have them react-->
<Reaction name = "GqaGDP--Gqabg" id="GqaGDP--Gqabg">
  <Reactant specieID="GqaGDP"            />
  <Product  specieID="Gqabg"            />

   <forwardRate>   2e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

    <!--  2ag    <-> 2agDegrad       Degraded 2AG   -->
    <Reaction name = "2ag--2agDegrad" id="2ag--2agDegrad">
         <Reactant specieID="2ag"            />
        <Product  specieID="2agDegrad"        />

        <forwardRate> 0.25e-03      </forwardRate>
        <reverseRate> 0.0e-03      </reverseRate>
    </Reaction>

	<!-- ************* degradation of  DAG by DAG kinase -->
     <!--  Dag   + DagK <-> DagKdag -> PA  step 1  (Km = 2 mol% Shulga et al. FEBS letters -->
    <Reaction name = "DagKdag1" id="DagKdag1">
         <Reactant specieID="Dag"            />
         <Reactant specieID="DagK"            />
        <Product  specieID="DagKdag"        />

        <forwardRate> 0.00007e-03      </forwardRate>
        <reverseRate> 0.8e-3         </reverseRate>
    </Reaction>

    <!--  Dag   + DagK <-> DagKdag -> PA   step 2 -->
    <Reaction name = "DagKdag1" id="DagKdag1">
         <Reactant specieID="DagKdag"            />
        <Product  specieID="PA"        />
        <Product  specieID="DagK"        />

        <forwardRate> 0.2e-03      </forwardRate>
        <reverseRate> 0.0e-03      </reverseRate>
    </Reaction>


<!-- These are values from Hellgren Kotaleski PKC paper. 2.5 uM affinity -->
    <!-- Pkc + Ca    <->   PkcCa  -->
    <Reaction name = "Pkc+Ca--PkcCa" id="Pkc+Ca--PkcCa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="Pkc"              />
        <Product  specieID="PkcCa"               />

        <forwardRate> 0.020e-03   </forwardRate>
        <reverseRate> 50e-03        </reverseRate>
    </Reaction>
 
<!-- THese are values from Hellgren Kotaleski PKC paper. 10 uM affinity
MUCH slower binding compared to CaDgl  -->
   <!-- PkcCa + Dag    <-> PkcCaDag    -->
    <Reaction name = "PkcCa+Dag--PkcCaDag" id="PkcCa+Dag--PkcCaDag">
        <Reactant specieID="PkcCa"               />
        <Reactant specieID="Dag"             />
        <Product  specieID="PkcCaDag"            />

        <forwardRate> 0.015e-06   </forwardRate>
        <reverseRate>  0.15e-03   </reverseRate>
    </Reaction>


<!-- GluR reactions with Glutamate and Gq-proteins -->
<!--III. *********** Gq coupled receptor, from GQ RXN FILE *************-->
   <!--0a. GluOut    Glu <-> GluOut>  -->
  <Reaction name = "Glu--GluOut" id="Glu--GluOut">
  	<Reactant specieID="Glu"/>
	<Product specieID="GluOut"/>

  	<forwardRate>0.5e-3</forwardRate>
  	<reverseRate>0.02e-6</reverseRate>
  	<Q10>0.2</Q10>
  </Reaction>

<Reaction name="GluOut+GluBuf--NULL" id="GluOut_buf--NULL">
  <Reactant specieID="GluOut" />
  <Reactant specieID="GluBuf" />
  <forwardRate>1e-06</forwardRate>
  <reverseRate>0</reverseRate>
</Reaction>
  
   <!--0b. GluMgluR <==> Desensitized, needed for prolonged DHPG application -->
      <Reaction name = "Glu+MgluR--GluMgluRdesens" id="Glu+MgluR--GluMgluRdesens">
        <Reactant specieID="GluMgluR"              />
        <Product  specieID="GluMgluRdesens"         />

        <forwardRate> 0.0625e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!--1a. Glu or Glu agonist Dhpg: Glu + MgluR <==> GluMgluR
    1st set of rates is for Dhpg, 2nd set of rates for Glu  -->
      <Reaction name = "Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"              />
        <Reactant specieID="MgluR"              />
        <Product  specieID="GluMgluR"         />

        <forwardRate> 0.5e-06 </forwardRate>
        <reverseRate> 6.6e-03      </reverseRate>
	<!-- uncomment below and comment above for Glu (vs Dhpg) -->
        <!--forwardRate> 0.002e-03 </forwardRate>
        <reverseRate> 1e-03      </reverseRate-->
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--2a. Gqabg + GluMgluR    <-> GluMgluRGq    -->
    <Reaction name = "Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"               />
        <Reactant specieID="GluMgluR"             />
        <Product  specieID="GluMgluRGq"            />

        <forwardRate>  0.0015e-03  </forwardRate>
        <reverseRate>   0.68e-03  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

  <!--1b. Gqabg + MgluR <-> MgluRGq -->
  <Reaction name = "Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg" />
        <Reactant specieID="MgluR" />
        <Product specieID="MgluRGq" />

        <forwardRate> 0.75e-06 </forwardRate>
        <reverseRate> 6.8e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <!--2b. Glu + MgluRGq <-> GluMgluRGq -->
   <Reaction name = "Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu" />
        <Reactant specieID="MgluRGq" />
        <Product specieID="GluMgluRGq" />

        <forwardRate> 0.001e-03 </forwardRate>
        <reverseRate> 1e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <!--3. GabgGluMglu    <-> GqaGTP + GluMgluRGqbg -->
    <Reaction name = "GluMgluRGq--GqaGTP+GluMgluRGqbg" id="GluMgluRGq--GqaGTP+GluMgluRGqbg">
        <Reactant specieID="GluMgluRGq"               />
        <Product specieID="GqaGTP"             />
        <Product specieID="GluMgluR"            /> 
 
        <forwardRate>  0.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
  

<!--Add endoplasmic reticulum and IP3R from the never used growth cone model-->
<!-- try out sneyd's model - not appropriate, does not pump, just buffers-->
     <!--https://pubmed.ncbi.nlm.nih.gov/6244305/ -->
     
    <!-- Ca leak -    CaOut + Leak <-> CaOutLeak -->
  <!-- Serca -->
  <Reaction name = "SERCA_1a" id="SERCA_1a">
    <Reactant specieID="Ca" />
    <Reactant specieID="SERCA"/>
    <Product specieID="SERCA_Ca"/>
    
    <forwardRate>2e-3</forwardRate>
    <reverseRate>0.04</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  
    <Reaction name = "SERCA_1b" id="SERCA_1b">
    <Reactant specieID="Ca" />
    <Reactant specieID="SERCA_Ca"/>
    <Product specieID="SERCA_Ca2"/>
    
    <forwardRate>2.5e-7</forwardRate>
    <reverseRate>25e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name = "SERCA_1c" id="SERCA_1c">
    <Reactant specieID="SERCA_Ca2"/>
    <Product specieID="CaER" power="2" />
    <Product specieID="SERCA"/>
    <forwardRate>7.5e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>




 <!-- ER Ca leak -    CaER+ LeakER <-> CaERLeak-->
  <Reaction name = "Ca_leakER" id="Ca_leakaER">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="CaERLeak"/>
    
    <forwardRate>7.e-8</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
    
<!--  ER Ca leak -    CaERLeak <-> Ca + LeakER-->
  <Reaction name = "Ca_leakER" id="Ca_leakbER">
    <Reactant specieID="CaERLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="LeakER"/>
    
    <forwardRate>2.5e-3</forwardRate>
    <reverseRate>0</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <!-- higher affinity lower capacity CRT-Ca binding,
       Baksh and Michalak, J Biol Chem 1991-->
  <Reaction name = "CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-7</forwardRate>
    <reverseRate>0.001</reverseRate>
    </Reaction>

  <Reaction name = "IP3R+IP3" id="IP3R+IP3">
    <Reactant specieID="IP3R"           />
    <Reactant specieID="Ip3"              />
    <Product  specieID="IP3RIP3"               />

    <forwardRate> 0.00001   </forwardRate>
    <reverseRate> 0.01       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name = "IP3RIP3+Ca" id="IP3RIP3+Ca">
    <Reactant specieID="IP3RIP3"           />
    <Reactant specieID="Ca"           />
    <Product  specieID="IP3RO"               />
    
    <forwardRate> 0.00008   </forwardRate>
    <reverseRate> .02    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

   <Reaction name = "IP3R+Ca" id="IP3R+Ca">                                                                      
    <Reactant specieID="IP3R"           />                                                                      
    <Reactant specieID="Ca"              />                                                                     
    <Product  specieID="IP3RC"               />                                                                 
                                                                                                                
    <forwardRate> 2.22e-6  </forwardRate>                                                                       
    <reverseRate> 5e-3      </reverseRate>                                                                      
    <Q10>         0.2           </Q10>                                                                          
  </Reaction>                                                                                                   
                                                                                                                
  <!--4. IP3R_Pa <-> IP3R_Pb -->
  <Reaction name = "IP3RC+Ca" id="IP3C+Ca">
  <Reactant specieID="IP3RC"           />
      <Reactant specieID="Ca"              />

    <Product  specieID="IP3RC2"               />

    <forwardRate> 4.44e-6   </forwardRate>
    <reverseRate> 10e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 <Reaction name = "IP3RC2+Ca" id="IP3C2+Ca">
  <Reactant specieID="IP3RC2"           />
      <Reactant specieID="Ca"              />

    <Product  specieID="IP3RC3"               />

    <forwardRate> 6.66e-6   </forwardRate>
    <reverseRate> 15e-3       </reverseRate>
    <Q10>         0.2           </Q10>
    </Reaction>
<Reaction name = "IP3RC3+Ca" id="IP3C3+Ca">
  <Reactant specieID="IP3RC3"           />
      <Reactant specieID="Ca"              />

    <Product  specieID="IP3RC4"               />

    <forwardRate> 8.88e-6   </forwardRate>
    <reverseRate> 20e-3       </reverseRate>
    <Q10>         0.2           </Q10>
    </Reaction>

    <Reaction name = "IP3R_Ob-flux_Ia" id="IP3R_Ob-flux">
    <Reactant specieID="IP3RO"           />
    <Reactant specieID="CaER"           />
    <Product  specieID="Ca"               />
    <Product  specieID="IP3RO"               />

    <forwardRate> 0.000048 </forwardRate>
    <reverseRate>  0.016      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>



  
</ReactionScheme>
