<ReactionScheme><Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaOut" id="CaOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s"/>
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s"/>
  
 
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1a" id="pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1aCa" id="pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1a" id="CaMCa4pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1aCa" id="CaMCa4pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca1a" id="CaMpmca1a" kdiff="0" kdiffunit="mu2/s"/> 

  
  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="CaM" id="CaM" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaM1N" id="CaM1N" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaM1C" id="CaM1C" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaM1C1N" id="CaM1C1N" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaM1C2N" id="CaM1C2N" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaM2C1N" id="CaM2C1N" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="10" kdiffunit="mu2/s"/>

  <Reaction name="Ca_pump1a_1" id="Ca_pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="pmca1aCa"/>

    <forwardRate>10e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_pump1a_2" id="Ca_pump1a_2">
    <Reactant specieID="pmca1aCa"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="Ca_CaMCa4pump1a_1" id="Ca_CaMCa4pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMCa4pmca1aCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_CaMCa4pump1a_2" id="Ca_CaMCa4pump1a_2">
    <Reactant specieID="CaMCa4pmca1aCa"/>
    <Product specieID="CaMCa4pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  

  <Reaction name="CaMCa4pump1a_bind" id="CaMCa4pump1a_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="CaMCa4pmca1a"/>

    <forwardRate>0.8e-6</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>

  


  <Reaction name="CaMCa4pump1a_Ca_unbind" id="CaMCa4pump1a_Ca_unbind">
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMpmca1a"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0957e-3</forwardRate>
    <reverseRate>1.006e-15</reverseRate>
  </Reaction>

 
 

  <Reaction name="CaMpump1a_Ca_unbind" id="CaMpump1a_Ca_unbind">
    <Reactant specieID="CaMpmca1a"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaM"/>
    <forwardRate>0.0614e-3</forwardRate>

  </Reaction>


  
  <Reaction name="Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <Reaction name="Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <Reaction name="Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="reaction1" id="reaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM1C"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction3" id="reaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="CaM1C1N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction5" id="reaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="CaM1C2N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction7" id="reaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="CaMCa2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction9" id="reaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C1N"/>
    <Product specieID="CaM2C1N"/>
    <forwardRate>0.0009545</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction11" id="reaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C2N"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction13" id="reaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction15" id="reaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="CaMCa2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction17" id="reaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="CaM1C1N"/>
    <forwardRate>0.01075</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction19" id="reaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C1N"/>
    <Product specieID="CaM1C2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction21" id="reaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="CaM2C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction23" id="reaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM2C1N"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaM"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="RyR2" id="RyR2" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM" id="RyR2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM1C" id="RyR2CaM1C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM2C" id="RyR2CaM2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM1N" id="RyR2CaM1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM2N" id="RyR2CaM2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM1C1N" id="RyR2CaM1C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM2C1N" id="RyR2CaM2C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM1C2N" id="RyR2CaM1C2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa4" id="RyR2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>


  <Specie name="CaRyR2" id="CaRyR2" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM" id="CaRyR2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM1C" id="CaRyR2CaM1C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM2C" id="CaRyR2CaM2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM1N" id="CaRyR2CaM1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM2N" id="CaRyR2CaM2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM1C1N" id="CaRyR2CaM1C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM2C1N" id="CaRyR2CaM2C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM1C2N" id="CaRyR2CaM1C2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaMCa4" id="CaRyR2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>



  <Reaction name="RyR2Ca1" id="RyR2Ca1">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>
  
  <Reaction name="RyR2CaMCa1" id="RyR2CaMCa1">
    <Reactant specieID="RyR2CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM1CCa1" id="RyR2CaM1CCa1">
    <Reactant specieID="RyR2CaM1C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM1C"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM2CCa1" id="RyR2CaM2CCa1">
    <Reactant specieID="RyR2CaM2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM2C"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM1NCa1" id="RyR2CaM1NCa1">
    <Reactant specieID="RyR2CaM1N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM1N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM2NCa1" id="RyR2CaM2NCa1">
    <Reactant specieID="RyR2CaM2N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM2N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM1C1NCa1" id="RyR2CaM1C1NCa1">
    <Reactant specieID="RyR2CaM1C1N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM1C1N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM1C2NCa1" id="RyR2CaM1C2NCa1">
    <Reactant specieID="RyR2CaM1C2N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM1C2N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM2C1NCa1" id="RyR2CaM2C1NCa1">
    <Reactant specieID="RyR2CaM2C1N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM2C1N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  
  <Reaction name="RyR2CaMCa4Ca1" id="RyR2CaMCa4Ca1">
    <Reactant specieID="RyR2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaMCa4"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  
  <Reaction name="RyR22_CaM_1" id="RyR2_CaM_1">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2CaM"/>
    <forwardRate>1.25e-6</forwardRate>
    <reverseRate>0.001025</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2_CaM1C_2" id="RyR2_CaM1C_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="RyR2CaM1C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2_CaMCa2C_2" id="RyR2_CaMCa2C_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2CaM2C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2_CaM1N_2" id="RyR2_CaM1N_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="RyR2CaM1N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2_CaMCa2N_2" id="RyR2_CaMCa2N_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="RyR2CaM2N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

   <Reaction name="RyR2_CaM1C1N_3" id="RyR2_CaM1C1N_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaM1C1N"/>
     <Product specieID="RyR2CaM1C1N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="RyR2_CaM2C1N_3" id="RyR2_CaM2C1N_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaM2C1N"/>
     <Product specieID="RyR2CaM2C1N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>
   <Reaction name="RyR2_CaM1C2N_3" id="RyR2_CaM1C2N_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaM1C2N"/>
     <Product specieID="RyR2CaM1C2N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="RyR2_CaMCa4_3" id="RyR2_CaMCa4_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="RyR2CaMCa4"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="ryr2_reaction1" id="ryr2_reaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM"/>
    <Product specieID="RyR2CaM1C"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction3" id="ryr2_reaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM1N"/>
    <Product specieID="RyR2CaM1C1N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction5" id="ryr2_reaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM2N"/>
    <Product specieID="RyR2CaM1C2N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction7" id="ryr2_reaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM1C"/>
    <Product specieID="RyR2CaM2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction9" id="ryr2_reaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM1C1N"/>
    <Product specieID="RyR2CaM2C1N"/>
    <forwardRate>0.0009545</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction11" id="ryr2_reaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM1C2N"/>
    <Product specieID="RyR2CaMCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction13" id="ryr2_reaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM"/>
    <Product specieID="RyR2CaM1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction15" id="ryr2_reaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM1N"/>
    <Product specieID="RyR2CaM2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction17" id="ryr2_reaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM1C"/>
    <Product specieID="RyR2CaM1C1N"/>
    <forwardRate>0.01075</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction19" id="ryr2_reaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM1C1N"/>
    <Product specieID="RyR2CaM1C2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction21" id="ryr2_reaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM2C"/>
    <Product specieID="RyR2CaM2C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction23" id="ryr2_reaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR2CaM2C1N"/>
    <Product specieID="RyR2CaMCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

<Reaction name="CaRyR22_CaM_1" id="CaRyR2_CaM_1">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaRyR2CaM"/>
    <forwardRate>1.25e-6</forwardRate>
    <reverseRate>0.001025</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2_CaM1C_2" id="CaRyR2_CaM1C_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="RyR2CaM1C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2_CaMCa2C_2" id="CaRyR2_CaMCa2C_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="CaRyR2CaM2C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2_CaM1N_2" id="CaRyR2_CaM1N_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="CaRyR2CaM1N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2_CaMCa2N_2" id="CaRyR2_CaMCa2N_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="CaRyR2CaM2N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

   <Reaction name="CaRyR2_CaM1C1N_3" id="CaRyR2_CaM1C1N_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaM1C1N"/>
     <Product specieID="CaRyR2CaM1C1N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="CaRyR2_CaM2C1N_3" id="CaRyR2_CaM2C1N_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaM2C1N"/>
     <Product specieID="CaRyR2CaM2C1N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>
   <Reaction name="CaRyR2_CaM1C2N_3" id="CaRyR2_CaM1C2N_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaM1C2N"/>
     <Product specieID="CaRyR2CaM1C2N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="CaRyR2_CaMCa4_3" id="CaRyR2_CaMCa4_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="CaRyR2CaMCa4"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   
<Reaction name="caryr2_reaction1" id="caryr2_reaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM"/>
    <Product specieID="CaRyR2CaM1C"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction3" id="caryr2_reaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM1N"/>
    <Product specieID="CaRyR2CaM1C1N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction5" id="caryr2_reaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM2N"/>
    <Product specieID="CaRyR2CaM1C2N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction7" id="caryr2_reaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM1C"/>
    <Product specieID="CaRyR2CaM2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction9" id="caryr2_reaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM1C1N"/>
    <Product specieID="CaRyR2CaM2C1N"/>
    <forwardRate>0.0009545</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction11" id="caryr2_reaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM1C2N"/>
    <Product specieID="CaRyR2CaMCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction13" id="caryr2_reaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM"/>
    <Product specieID="CaRyR2CaM1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction15" id="caryr2_reaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM1N"/>
    <Product specieID="CaRyR2CaM2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction17" id="caryr2_reaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM1C"/>
    <Product specieID="CaRyR2CaM1C1N"/>
    <forwardRate>0.01075</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction19" id="caryr2_reaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM1C1N"/>
    <Product specieID="CaRyR2CaM1C2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction21" id="caryr2_reaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM2C"/>
    <Product specieID="CaRyR2CaM2C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction23" id="caryr2_reaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaRyR2CaM2C1N"/>
    <Product specieID="CaRyR2CaMCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

<Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <Reaction name="Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name="Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Reaction name="Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="CaER" power="2"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>50e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name="Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="LeakER"/>
    <Product specieID="Ca"/>

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="CK" id="CK" kdiff="0.32" kdiffunit="mu2/s"/>

  <Specie name="CKCaMCa4" id="CKCaMCa4" kdiff="0.02" kdiffunit="mu2/s"/>
  <Specie name="CKCaM" id="CKCaM" kdiff="0.02" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2C" id="CKCaMCa2C" kdiff="0.02" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N" id="CKCaMCa2N" kdiff="0.02" kdiffunit="mu2/s"/>

  <Specie name="CKp" id="CKp" kdiff="0.02" kdiffunit="mu2/s"/>    
  <Specie name="CKpCaMCa4" id="CKpCaMCa4" kdiff="0.02" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2C" id="CKpCaMCa2C" kdiff="0.02" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2N" id="CKpCaMCa2N" kdiff="0.02" kdiffunit="mu2/s"/>
  <Specie name="CKpCaM" id="CKpCaM" kdiff="0.02" kdiffunit="mu2/s"/>
  
  <Specie name="CKCaM_CKCaM" id="CKCaM_CKCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2C_CKCaM" id="CKCaMCa2C_CKCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N_CKCaM" id="CKCaMCa2N_CKCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa4_CKCaM" id="CKCaMCa4_CKCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2C_CKCaMCa2C" id="CKCaMCa2C_CKCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N_CKCaMCa2C" id="CKCaMCa2N_CKCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2C_CKCaMCa4" id="CKCaMCa2C_CKCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N_CKCaMCa2N" id="CKCaMCa2N_CKCaMCa2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N_CKCaMCa4" id="CKCaMCa2N_CKCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa4_CKCaMCa4" id="CKCaMCa4_CKCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="CKpCaM_CKCaM" id="CKpCaM_CKCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2C_CKpCaM" id="CKCaMCa2C_CKpCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2C_CKCaM" id="CKpCaMCa2C_CKCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N_CKpCaM" id="CKCaMCa2N_CKpCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2N_CKCaM" id="CKpCaMCa2N_CKCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa4_CKpCaM" id="CKCaMCa4_CKpCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa4_CKCaM" id="CKpCaMCa4_CKCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2C_CKpCaMCa2C" id="CKCaMCa2C_CKpCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N_CKpCaMCa2C" id="CKCaMCa2N_CKpCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2N_CKCaMCa2C" id="CKpCaMCa2N_CKCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2C_CKpCaMCa4" id="CKCaMCa2C_CKpCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2C_CKCaMCa4" id="CKpCaMCa2C_CKCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N_CKpCaMCa2N" id="CKCaMCa2N_CKpCaMCa2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2N_CKCaMCa4" id="CKpCaMCa2N_CKCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa2N_CKpCaMCa4" id="CKCaMCa2N_CKpCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKCaMCa4_CKpCaMCa4" id="CKCaMCa4_CKpCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
   
  <Specie name="PP1" id="PP1" kdiff="0" kdiffunit="mu2/s"/>



  <Specie name="CKpPP1" id="CKpPP1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa4PP1" id="CKpCaMCa4PP1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2NPP1" id="CKpCaMCa2NPP1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMCa2CPP1" id="CKpCaMCa2CPP1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CKpCaMPP1" id="CKpCaMPP1" kdiff="0" kdiffunit="mu2/s"/>


  <Reaction name="CKCaM bind" id="CKCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="CK"/>
    <Product specieID="CKCaM"/>
    
    <forwardRate> 3.8e-9   </forwardRate>
    <reverseRate> 5.5e-3      </reverseRate>
 </Reaction>
  
  <Reaction name="CKCaMCa2C bind" id="CKCaMCa2C_bind">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="CK"/>
    <Product specieID="CKCaMCa2C"/>
    
    <forwardRate> 0.92e-6   </forwardRate>
    <reverseRate> 6.8e-3      </reverseRate>
  </Reaction>

  <Reaction name="CKCaMCa2N bind" id="CKCaMCa2N_bind">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="CK"/>
    <Product specieID="CKCaMCa2N"/>
    
    <forwardRate> 0.1e-6   </forwardRate>
    <reverseRate> 1.7e-3      </reverseRate>
  </Reaction>
  
  
  <Reaction name="CKCaMCa4 bind" id="CKCaMCa4_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="CK"/>
    <Product specieID="CKCaMCa4"/>
    
    <forwardRate> 30e-6   </forwardRate>
    <reverseRate> 1.7e-3      </reverseRate>
  </Reaction>

  <Reaction name="CKCaMN_bind" id="CKCaMN_Ca_bind">
    <Reactant specieID="CKCaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CKCaMCa2N"/>
    <forwardRate>2.23e-7</forwardRate>
    <reverseRate>0.361</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="CKCaMC_bind" id="CKCaMC_Ca_bind">
      <Reactant specieID="CKCaM"/>
      <Reactant specieID="Ca" power="2"/>
      <Product specieID="CKCaMCa2C"/>
      <forwardRate>2.23e-7</forwardRate>
      <reverseRate>0.00308</reverseRate>
      <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="CKCaMCa2C_bind" id="CKCaMCa2C_Ca_bind">
       <Reactant specieID="CKCaMCa2C"/>
       <Reactant specieID="Ca" power="2"/>
       <Product specieID="CKCaMCa4"/>
       <forwardRate>1.93e-7</forwardRate>
       <reverseRate>0.2038</reverseRate>
       <Q10>0.2</Q10>
  </Reaction>
     
  <Reaction name="CKCaMCa2N_bind" id="CKCaMCa2N_Ca_bind">
       <Reactant specieID="CKCaMCa2N"/>
       <Reactant specieID="Ca" power="2"/>
       <Product specieID="CKCaMCa4"/>
       <forwardRate>0.000444</forwardRate>
       <reverseRate>4</reverseRate>
       <Q10>0.2</Q10>
  </Reaction>
    

    
  <Reaction name="CKCaM bind" id="CKCaM_CKCaM_bind">
    <Reactant specieID="CKCaM" power="2"/>
    <Product specieID="CKCaM_CKCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2C_CKCaM bind" id="CKCaMCa2C_CKCaM bind">
    <Reactant specieID="CKCaM"/>
    <Reactant specieID="CKCaMCa2C"/>
    <Product specieID="CKCaMCa2C_CKCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>


  <Reaction name="CKCaMCa2N_CKCaM bind" id="CKCaMCa2N_CKCaM bind">
    <Reactant specieID="CKCaM"/>
    <Reactant specieID="CKCaMCa2N"/>
    <Product specieID="CKCaMCa2N_CKCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa4_CKCaM bind" id="CKCaMCa4_CKCaM bind">
    <Reactant specieID="CKCaM"/>
    <Reactant specieID="CKCaMCa4"/>
    <Product specieID="CKCaMCa4_CKCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  <Reaction name="CKCaMCa2C_CKCaMCa2C bind" id="CKCaMCa2C_CKCaMCa2C bind">
    <Reactant specieID="CKCaMCa2C" power="2"/>
    <Product specieID="CKCaMCa2C_CKCaMCa2C"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2C_CKCaMCa2N bind" id="CKCaMCa2C_CKCaMCa2N bind">
    <Reactant specieID="CKCaMCa2C"/>
    <Reactant specieID="CKCaMCa2N"/>
    <Product specieID="CKCaMCa2N_CKCaMCa2C"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2C_CKCaMCa4 bind" id="CKCaMCa2C_CKCaMCa4 bind">
    <Reactant specieID="CKCaMCa2C"/>
    <Reactant specieID="CKCaMCa4"/>
    <Product specieID="CKCaMCa2C_CKCaMCa4"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2N_CKCaMCa2N bind" id="CKCaMCa2N_CKCaMCa2N bind">
    <Reactant specieID="CKCaMCa2N" power="2"/>
    <Product specieID="CKCaMCa2N_CKCaMCa2N"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  
  <Reaction name="CKCaMCa2N_CKCaMCa4 bind" id="CKCaMCa2N_CKCaMCa4 bind">
    <Reactant specieID="CKCaMCa2N"/>
    <Reactant specieID="CKCaMCa4"/>
    <Product specieID="CKCaMCa2N_CKCaMCa4"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa4_CKCaMCa4 bind" id="CKCaMCa4_CKCaMCa4 bind">
    <Reactant specieID="CKCaMCa4" power="2"/>
    <Product specieID="CKCaMCa4_CKCaMCa4"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

<Reaction name="CKCaM_CKpCaM bind" id="CKCaM_CKpCaM_bind">
    <Reactant specieID="CKpCaM"/>
    <Reactant specieID="CKCaM"/>
    <Product specieID="CKpCaM_CKCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2C_CKpCaM bind" id="CKCaMCa2C_CKpCaM bind">
    <Reactant specieID="CKpCaM"/>
    <Reactant specieID="CKCaMCa2C"/>
    <Product specieID="CKCaMCa2C_CKpCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  <Reaction name="CKpCaMCa2C_CKCaM bind" id="CKpCaMCa2C_CKCaM bind">
    <Reactant specieID="CKCaM"/>
    <Reactant specieID="CKpCaMCa2C"/>
    <Product specieID="CKpCaMCa2C_CKCaM"/>
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>


  <Reaction name="CKCaMCa2N_CKpCaM bind" id="CKCaMCa2N_CKpCaM bind">
    <Reactant specieID="CKpCaM"/>
    <Reactant specieID="CKCaMCa2N"/>
    <Product specieID="CKCaMCa2N_CKpCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKpCaMCa2N_CKCaM bind" id="CKpCaMCa2N_CKCaM bind">
    <Reactant specieID="CKCaM"/>
    <Reactant specieID="CKpCaMCa2N"/>
    <Product specieID="CKpCaMCa2N_CKCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa4_CKpCaM bind" id="CKCaMCa4_CKpCaM bind">
    <Reactant specieID="CKpCaM"/>
    <Reactant specieID="CKCaMCa4"/>
    <Product specieID="CKCaMCa4_CKpCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  <Reaction name="CKpCaMCa4_CKCaM bind" id="CKpCaMCa4_CKCaM bind">
    <Reactant specieID="CKCaM"/>
    <Reactant specieID="CKpCaMCa4"/>
    <Product specieID="CKpCaMCa4_CKCaM"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>


  <Reaction name="CKCaMCa2C_CKpCaMCa2C bind" id="CKCaMCa2C_CKpCaMCa2C bind">
    <Reactant specieID="CKCaMCa2C"/>
    <Reactant specieID="CKpCaMCa2C"/>
    <Product specieID="CKCaMCa2C_CKpCaMCa2C"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKpCaMCa2C_CKCaMCa2N bind" id="CKpCaMCa2C_CKCaMCa2N bind">
    <Reactant specieID="CKCaMCa2C"/>
    <Reactant specieID="CKpCaMCa2N"/>
    <Product specieID="CKpCaMCa2N_CKCaMCa2C"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKpCaMCa2C_CKCaMCa2N bind2" id="CKpCaMCa2C_CKCaMCa2N bind2">
    <Reactant specieID="CKpCaMCa2C"/>
    <Reactant specieID="CKCaMCa2N"/>
    <Product specieID="CKCaMCa2N_CKpCaMCa2C"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
  <Reaction name="CKpCaMCa2C_CKCaMCa4 bind" id="CKpCaMCa2C_CKCaMCa4 bind">
    <Reactant specieID="CKpCaMCa2C"/>
    <Reactant specieID="CKCaMCa4"/>
    <Product specieID="CKpCaMCa2C_CKCaMCa4"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  <Reaction name="CKCaMCa2C_CKpCaMCa4 bind" id="CKCaMCa2C_CKpCaMCa4 bind">
    <Reactant specieID="CKCaMCa2C"/>
    <Reactant specieID="CKpCaMCa4"/>
    <Product specieID="CKCaMCa2C_CKpCaMCa4"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
  <Reaction name="CKCaMCa2N_CKpCaMCa2N bind" id="CKCaMCa2N_CKpCaMCa2N bind">
    <Reactant specieID="CKCaMCa2N"/>
    <Reactant specieID="CKpCaMCa2N"/>
    <Product specieID="CKCaMCa2N_CKpCaMCa2N"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  
  <Reaction name="CKpCaMCa2N_CKCaMCa4 bind" id="CKpCaMCa2N_CKCaMCa4 bind">
    <Reactant specieID="CKpCaMCa2N"/>
    <Reactant specieID="CKCaMCa4"/>
    <Product specieID="CKpCaMCa2N_CKCaMCa4"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

    <Reaction name="CKCaMCa2N_CKpCaMCa4 bind" id="CKCaMCa2N_CKpCaMCa4 bind">
    <Reactant specieID="CKCaMCa2N"/>
    <Reactant specieID="CKCaMCa4"/>
    <Product specieID="CKCaMCa2N_CKpCaMCa4"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa4_CKpCaMCa4 bind" id="CKCaMCa4_CKpCaMCa4 bind">
    <Reactant specieID="CKCaMCa4"/>
    <Reactant specieID="CKpCaMCa4"/>
    <Product specieID="CKCaMCa4_CKpCaMCa4"/>
    
    <forwardRate> 50e-5 </forwardRate>
    <reverseRate> 60e-2     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>


<Reaction name="CKCaMCa4_CKCaMCa4 phos" id="CKCaMCa4_CKCaMCa4 phos">
    <Reactant specieID="CKCaMCa4_CKCaMCa4"/>
    <Product specieID="CKpCaMCa4"/>
    <Product specieID="CKCaMCa4"/>
    <forwardRate> 0.960e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

<Reaction name="CKCaMCa4_CKpCaMCa4 phos" id="CKCaMCa4_CKpCaMCa4 phos">
    <Reactant specieID="CKCaMCa4_CKpCaMCa4"/>
    <Product specieID="CKpCaMCa4" power="2"/>
    <forwardRate> 0.960e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
  <Reaction name="CKCaMCa2C_CKCaM phos" id="CKCaMCa2C_CKCaM phos">
    <Reactant specieID="CKCaMCa2C_CKCaM"/>
    <Product specieID="CKpCaM"/>
    <Product specieID="CKCaMCa2C"/>
    <forwardRate> 0.0640e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKpCaMCa2C_CKCaM phos" id="CKpCaMCa2C_CKCaM phos">
    <Reactant specieID="CKpCaMCa2C_CKCaM"/>
    <Product specieID="CKpCaM"/>
    <Product specieID="CKpCaMCa2C"/>
    <forwardRate> 0.0640e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
  <Reaction name="CKCaMCa2N_CKCaM phos" id="CKCaMCa2N_CKCaM phos">
    <Reactant specieID="CKCaMCa2N_CKCaM"/>
    <Product specieID="CKpCaM"/>
    <Product specieID="CKCaMCa2N"/>
    <forwardRate> 0.120e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKpCaMCa2N_CKCaM phos" id="CKpCaMCa2N_CKCaM phos">
    <Reactant specieID="CKpCaMCa2N_CKCaM"/>
    <Product specieID="CKpCaM"/>
    <Product specieID="CKpCaMCa2N"/>
    <forwardRate> 0.120e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
<Reaction name="CKCaMCa4_CKCaM phos" id="CKCaMCa4_CKCaM phos">
    <Reactant specieID="CKCaMCa4_CKCaM"/>
    <Product specieID="CKpCaM"/>
    <Product specieID="CKCaMCa4"/>
    <forwardRate> 0.960e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

<Reaction name="CKpCaMCa4_CKCaM phos" id="CKpCaMCa4_CKCaM phos">
    <Reactant specieID="CKpCaMCa4_CKCaM"/>
    <Product specieID="CKpCaM"/>
    <Product specieID="CKpCaMCa4"/>
    <forwardRate> 0.960e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  
  <Reaction name="CKCaMCa2C_CKCaMCa2C phos" id="CKCaMCa2C_CKCaMCa2C phos">
    <Reactant specieID="CKCaMCa2C_CKCaMCa2C"/>
    <Product specieID="CKpCaMCa2C"/>
    <Product specieID="CKCaMCa2C"/>
    <forwardRate> 0.064e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2C_CKpCaMCa2C phos" id="CKpCaMCa2C_CKpCaMCa2C phos">
    <Reactant specieID="CKCaMCa2C_CKpCaMCa2C"/>
    <Product specieID="CKpCaMCa2C" power="2"/>
    <forwardRate> 0.064e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2N_CKpCaMCa2C phos" id="CKpCaMCa2N_CKpCaMCa2C phos">
    <Reactant specieID="CKCaMCa2N_CKpCaMCa2C"/>
    <Product specieID="CKpCaMCa2N"/>
    <Product specieID="CKpCaMCa2C"/>
    <forwardRate> 0.064e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKpCaMCa2C_CKCaMCa2N phos" id="CKpCaMCa2C_CKCaMCa2N phos">
    <Reactant specieID="CKCaMCa2N_CKCaMCa2C"/>
    <Product specieID="CKpCaMCa2C"/>
    <Product specieID="CKCaMCa2N"/>
    <forwardRate> 0.120e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2C_CKpCaMCa2N phos2" id="CKCaMCa2C_CKpCaMCa2N phos2">
    <Reactant specieID="CKCaMCa2N_CKCaMCa2C"/>
    <Product specieID="CKCaMCa2C"/>
    <Product specieID="CKpCaMCa2N"/>
    <forwardRate> 0.064e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
  <Reaction name="CKpCaMCa2N_CKCaMCa2C phos1" id="CKpCaMCa2N_CKCaMCa2C phos1">
    <Reactant specieID="CKpCaMCa2N_CKCaMCa2C"/>
    <Product specieID="CKpCaMCa2C"/>
    <Product specieID="CKpCaMCa2N"/>
    <forwardRate> 0.120e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
  <Reaction name="CKCaMCa2C_CKCaMCa2N phos2" id="CKCaMCa2C_CKCaMCa2N phos2">
    <Reactant specieID="CKCaMCa2N_CKCaMCa2C"/>
    <Product specieID="CKCaMCa2C"/>
    <Product specieID="CKpCaMCa2N"/>
    <forwardRate> 0.064e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
  <Reaction name="CKCaMCa2C_CKCaMCa4 phos1" id="CKCaMCa2C_CKCaMCa4 phos1">
    <Reactant specieID="CKCaMCa2C_CKCaMCa4"/>
    <Product specieID="CKpCaMCa2C"/>
    <Product specieID="CKCaMCa4"/>
    <forwardRate> 0.960e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  
  <Reaction name="CKCaMCa2C_CKpCaMCa4 phos1" id="CKCaMCa2C_CKpCaMCa4 phos1">
    <Reactant specieID="CKCaMCa2C_CKpCaMCa4"/>
    <Product specieID="CKpCaMCa2C"/>
    <Product specieID="CKpCaMCa4"/>
    <forwardRate> 0.960e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>
  
  <Reaction name="CKCaMCa2C_CKCaMCa4 phos2" id="CKCaMCa2C_CKCaMCa4 phos2">
    <Reactant specieID="CKCaMCa2C_CKCaMCa4"/>
    <Product specieID="CKCaMCa2C"/>
    <Product specieID="CKpCaMCa4"/>
    <forwardRate> 0.064e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKpCaMCa2C_CKCaMCa4 phos2" id="CKpCaMCa2C_CKCaMCa4 phos2">
    <Reactant specieID="CKpCaMCa2C_CKCaMCa4"/>
    <Product specieID="CKpCaMCa2C"/>
    <Product specieID="CKpCaMCa4"/>
    <forwardRate> 0.064e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  
  <Reaction name="CKCaMCa2N_CKCaMCa2N phos" id="CKCaMCa2N_CKCaMCa2N phos">
    <Reactant specieID="CKCaMCa2N_CKCaMCa2N"/>
    <Product specieID="CKpCaMCa2N"/>
    <Product specieID="CKCaMCa2N"/>
    <forwardRate> 0.120e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

   <Reaction name="CKCaMCa2N_CKpCaMCa2N phos" id="CKCaMCa2N_CKpCaMCa2N phos">
    <Reactant specieID="CKCaMCa2N_CKpCaMCa2N"/>
    <Product specieID="CKpCaMCa2N" power="2"/>
    <forwardRate> 0.120e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>


  <Reaction name="CKCaMCa2N_CKCaMCa4 phos1" id="CKCaMCa2N_CKCaMCa4 phos1">
    <Reactant specieID="CKCaMCa2N_CKCaMCa4"/>
    <Product specieID="CKpCaMCa2N"/>
    <Product specieID="CKCaMCa4"/>
    <forwardRate> 0.960e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2N_CKpCaMCa4 phos1" id="CKCaMCa2N_CKpCaMCa4 phos1">
    <Reactant specieID="CKCaMCa2N_CKpCaMCa4"/>
    <Product specieID="CKpCaMCa2N"/>
    <Product specieID="CKpCaMCa4"/>
    <forwardRate> 0.960e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKCaMCa2N_CKCaMCa4 phos2" id="CKCaMCa2N_CKCaMCa4 phos2">
    <Reactant specieID="CKCaMCa2N_CKCaMCa4"/>
    <Product specieID="CKCaMCa2N"/>
    <Product specieID="CKpCaMCa4"/>
    <forwardRate> 0.120e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>

  <Reaction name="CKpCaMCa2N_CKCaMCa4 phos2" id="CKpCaMCa2N_CKCaMCa4 phos2">
    <Reactant specieID="CKpCaMCa2N_CKCaMCa4"/>
    <Product specieID="CKpCaMCa2N"/>
    <Product specieID="CKpCaMCa4"/>
    <forwardRate> 0.120e-3 </forwardRate>
    <reverseRate> 0     </reverseRate>
    <Q10>     2             </Q10>
  </Reaction>


  
  
  <Reaction name="CKpCaMCa4 auto" id="CKpCaMCa4_auto">
    <Reactant specieID="CKpCaMCa4"/>
    <Product specieID="CaMCa4"/>
    <Product specieID="CKp"/>
    
    <forwardRate> 10e-6 </forwardRate>
    <reverseRate> 0.07e-3   </reverseRate>
  </Reaction>
  
  <Reaction name="CKpCaMCa2C auto" id="CKpCaMCa2C_auto">
    <Reactant specieID="CKpCaMCa2C"/>
    <Product specieID="CaMCa2C"/>
    <Product specieID="CKp"/>
    
    <forwardRate> 0.3e-6 </forwardRate>
    <reverseRate> 0.07e-3   </reverseRate>
  </Reaction>

  <Reaction name="CKpCaMCa2N auto" id="CKpCaMCa2N_auto">
    <Reactant specieID="CKpCaMCa2N"/>
    <Product specieID="CaMCa2N"/>
    <Product specieID="CKp"/>
    
    <forwardRate> 0.03e-6 </forwardRate>
    <reverseRate> 0.07e-3   </reverseRate>
  </Reaction>

  <Reaction name="CKpCaM auto" id="CKpCaM_auto">
    <Reactant specieID="CKpCaM"/>
    <Product specieID="CaM"/>
    <Product specieID="CKp"/>
    
    <forwardRate> 1.27e-9 </forwardRate>
    <reverseRate> 0.07e-3   </reverseRate>
  </Reaction>

  
  <Reaction name="CKp_bind" id="CKp_bind">
     <Reactant specieID="CKp"/>
     <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>
	
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <Reaction name="CKpPP1_reac" id="CKpPP1_reac">
      <Reactant specieID="CKpPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CK"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>
    
    
    <Reaction name="CKpCaMCa4PP1_bind" id="CKpCaMCa4PP1_bind">
      <Reactant specieID="CKpCaMCa4"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCaMCa4PP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCaMCa4PP1_reac" id="CKpCaMCa4PP1_reac">
      <Reactant specieID="CKpCaMCa4PP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCaMCa4"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCaMCa2NPP1_bind" id="CKpCaMCa2NPP1_bind">
      <Reactant specieID="CKpCaMCa2N"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCaMCa2NPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCaMCa2NPP1_reac" id="CKpCaMCa2NPP1_reac">
      <Reactant specieID="CKpCaMCa2NPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCaMCa2N"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCaMCa2CPP1_bind" id="CKpCaMCa2CPP1_bind">
      <Reactant specieID="CKpCaMCa2C"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCaMCa2CPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCaMCa2CPP1_reac" id="CKpCaMCa2CPP1_reac">
      <Reactant specieID="CKpCaMCa2CPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCaMCa2C"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>

    <Reaction name="CKpCaMPP1_bind" id="CKpCaMPP1_bind">
      <Reactant specieID="CKpCaM"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCaMPP1"/>
      
	
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCaMPP1_reac" id="CKpCaMPP1_reac">
      <Reactant specieID="CKpCaMPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCaM"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>

	
<Specie name="PP2B" id="PP2B" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM" id="PP2BCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM1C" id="PP2BCaM1C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM1N" id="PP2BCaM1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa2C" id="PP2BCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2CaMCa2N" id="PP2BCaMCa2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM1C1N" id="PP2BCaM1C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM1C2N" id="PP2BCaM1C2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM2C1N" id="PP2BCaM2C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa4" id="PP2BCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  
  <Reaction name="CaM+PP2B--PP2BCaM reac" id="CaM+PP2B--PP2BCaM_id">
    <Reactant specieID="CaM"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM"/>
    
    <forwardRate> 0.046e-5       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>


  <Reaction name="CaM1C+PP2B--PP2BCaM1C reac" id="CaM1C+PP2B--PP2BCaM1C_id">
    <Reactant specieID="CaM1C"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM1C"/>
    
    <forwardRate> 0.046e-4       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

    <Reaction name="CaMCa2C+PP2B--PP2BCaMCa2C reac" id="CaMCa2C+PP2B--PP2BCaMCa2C_id">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa2C"/>
    
    <forwardRate> 0.046e-4       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>
  
  <Reaction name="CaM1N+PP2B--PP2BCaM1N reac" id="CaM1N+PP2B--PP2BCaM1N_id">
    <Reactant specieID="CaM1N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM1N"/>
    
    <forwardRate> 0.046e-4       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="CaMCa2N+PP2B--PP2BCaMCa2N reac" id="CaMCa2N+PP2B--PP2BCaMCa2N_id">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa2N"/>
    
    <forwardRate> 0.046e-4       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>


  <Reaction name="CaM1C1N+PP2B--PP2BCaM1C1N reac" id="CaM1C1N+PP2B--PP2BCaM1C1N_id">
    <Reactant specieID="CaM1C1N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM1C1N"/>
    
    <forwardRate> 0.046e-3       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="CaM2C1N+PP2B--PP2BCaM2C1N reac" id="CaM2C1N+PP2B--PP2BCaM2C1N_id">
    <Reactant specieID="CaM2C1N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM2C1N"/>
    
    <forwardRate> 0.046e-3       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="CaM1C2N+PP2B--PP2BCaM1C2N reac" id="CaM1C2N+PP2B--PP2BCaM1C2N_id">
    <Reactant specieID="CaM1C2N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM1C2N"/>
    
    <forwardRate> 0.046e-3       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="CaMCa4+PP2B--PP2BCaMCa4 reac" id="CaMCa4+PP2B--PP2BCaMCa4_id">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate> 0.046e-3       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="PP2Breaction1" id="PP2Breaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM"/>
    <Product specieID="PP2BCaM1C"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction3" id="PP2Breaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1N"/>
    <Product specieID="PP2BCaM1C1N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction5" id="PP2Breaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaMCa2N"/>
    <Product specieID="PP2BCaM1C2N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction7" id="PP2Breaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C"/>
    <Product specieID="PP2BCaMCa2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction9" id="PP2Breaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C1N"/>
    <Product specieID="PP2BCaM2C1N"/>
    <forwardRate>0.0009545</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction11" id="PP2Breaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C2N"/>
    <Product specieID="PP2BCaMCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction13" id="PP2Breaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM"/>
    <Product specieID="PP2BCaM1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction15" id="PP2Breaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1N"/>
    <Product specieID="PP2BCaMCa2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction17" id="PP2Breaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C"/>
    <Product specieID="PP2BCaM1C1N"/>
    <forwardRate>0.01075</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction19" id="PP2Breaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C1N"/>
    <Product specieID="PP2BCaM1C2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction21" id="PP2Breaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaMCa2C"/>
    <Product specieID="PP2BCaM2C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction23" id="PP2Breaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM2C1N"/>
    <Product specieID="PP2BCaMCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

</ReactionScheme>
