<ReactionScheme><Specie name="Ca" id="Ca" kdiff="223" kdiffunit="mu2/s"/>
  <Specie name="CaOut" id="CaOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="20" kdiffunit="mu2/s"/>
  <Specie name="CalbinC" id="CalbinC" kdiff="20" kdiffunit="mu2/s"/>
  
 
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca2b" id="pmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca2bCa" id="pmca2bCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1a" id="pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1aCa" id="pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca2b" id="CaMCa4pmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca2bCa" id="CaMCa4pmca2bCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1a" id="CaMCa4pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1aCa" id="CaMCa4pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca2b" id="CaMpmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca1a" id="CaMpmca1a" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="Ng" id="Ng" kdiff="13" kdiffunit="mu2/s"/>
  <Specie name="NgCaM" id="NgCaM" kdiff="8" kdiffunit="mu2/s"/>
  <Specie name="CaM" id="CaM" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="CaM1N" id="CaM1N" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="CaM2N" id="CaM2N" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="CaM1C" id="CaM1C" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="CaM1C1N" id="CaM1C1N" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="CaM1C2N" id="CaM1C2N" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="CaM2C" id="CaM2C" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="CaM2C1N" id="CaM2C1N" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="11" kdiffunit="mu2/s"/>

  <Reaction name="Ca_pump1a_1" id="Ca_pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="pmca1aCa"/>

    <forwardRate>10e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_pump1a_2" id="Ca_pump1a_2">
    <Reactant specieID="pmca1aCa"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

 <Reaction name="Ca_pump2b_1" id="Ca_pump2b_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca2b"/>
    <Product specieID="pmca2bCa"/>

    <forwardRate>80e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_pump2b_2" id="Ca_pump2b_2">
    <Reactant specieID="pmca2bCa"/>
    <Product specieID="pmca2b"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_CaMCa4pump1a_1" id="Ca_CaMCa4pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMCa4pmca1aCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_CaMCa4pump1a_2" id="Ca_CaMCa4pump1a_2">
    <Reactant specieID="CaMCa4pmca1aCa"/>
    <Product specieID="CaMCa4pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


    <Reaction name="Ca_CaMCa4pump2b_1" id="Ca_CaMCa4pump2b_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca2b"/>
    <Product specieID="CaMCa4pmca2bCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_CaMCa4pump2b_2" id="Ca_CaMCa4pump2b_2">
    <Reactant specieID="CaMCa4pmca2bCa"/>
    <Product specieID="CaMCa4pmca2b"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name="CaMCa4pump1a_bind" id="CaMCa4pump1a_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="CaMCa4pmca1a"/>

    <forwardRate>0.8e-6</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>

<Reaction name="CaMCa4pump2b_bind" id="CaMCa4pump2b_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca2b"/>
    <Product specieID="CaMCa4pmca2b"/>

    <forwardRate>8e-5</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>


  <Reaction name="CaMCa4pump2b_Ca_unbind" id="CaMCa4pump2b_Ca_unbind">
    <Reactant specieID="CaMCa4pmca2b"/>
    <Product specieID="CaMpmca2b"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0314e-3</forwardRate>
    <reverseRate>152.49e-15</reverseRate>
  </Reaction>  


  <Reaction name="CaMCa4pump1a_Ca_unbind" id="CaMCa4pump1a_Ca_unbind">
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMpmca1a"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0957e-3</forwardRate>
    <reverseRate>1.006e-15</reverseRate>
  </Reaction>

 
 

  <Reaction name="CaMpump1a_Ca_unbind" id="CaMpump1a_Ca_unbind">
    <Reactant specieID="CaMpmca1a"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaM"/>
    <forwardRate>0.0614e-3</forwardRate>

  </Reaction>

  

 <Reaction name="CaMpump2b_Ca_unbind" id="CaMpump2b_Ca_unbind">
    <Reactant specieID="CaMpmca2b"/>
    <Product specieID="pmca2b"/>
    <Product specieID="CaM"/>
    <forwardRate>0.034e-3</forwardRate>
  </Reaction>
  
  <Reaction name="Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <Reaction name="Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <Reaction name="Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="reaction1" id="reaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM1C"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction3" id="reaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="CaM1C1N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction5" id="reaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM2N"/>
    <Product specieID="CaM1C2N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction7" id="reaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="CaM2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction9" id="reaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C1N"/>
    <Product specieID="CaM2C1N"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction11" id="reaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C2N"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction13" id="reaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction15" id="reaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="CaM2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction17" id="reaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="CaM1C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction19" id="reaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C1N"/>
    <Product specieID="CaM1C2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction21" id="reaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM2C"/>
    <Product specieID="CaM2C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction23" id="reaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM2C1N"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaM"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

    
<Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <Reaction name="Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name="Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Reaction name="Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="CaER" power="2"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>50e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name="Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="LeakER"/>
    <Product specieID="Ca"/>

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="Glu" id="Glu" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="GluOut" id="GluOut" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="MgluR" id="MgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluR" id="GluMgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluRdesens" id="GluMgluRdesens" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="MgluRGq" id="MgluRGq" kdiff="0" kdiffunit="mu2/s"/> 
  <Specie name="Gqabg" id="Gqabg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluRGq" id="GluMgluRGq" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGTP" id="GqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGDP" id="GqaGDP" kdiff="0" kdiffunit="mu2/s"/>  

  <Specie name="Plc" id="Plc" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCa" id="PlcCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTP" id="PlcCaGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcGqaGTP" id="PlcGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Pip2" id="Pip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaPip2" id="PlcCaPip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTPPip2" id="PlcCaGqaGTPPip2" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="Dag" id="Dag" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="DagK" id="DagK" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="DagKdag" id="DagKdag" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PA" id="PA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PAP" id="PAP" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="PAPAP" id="PAPAP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgPAPAP" id="NgPAPAP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Dgl" id="Dgl" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pDgl" id="pDgl" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaDgl" id="CaDgl" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CapDgl" id="CapDgl" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="DagCaDgl" id="DagCaDgl" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="DagCapDgl" id="DagCapDgl" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="2ag" id="2ag" kdiff="88.6" kdiffunit="mu2/s"/>
 
  
  <Specie name="PIkinase" id="PIkinase" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3degPIk" id="IP3degPIk" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="IP3degrad" id="IP3degrad" kdiff="10.6" kdiffunit="mu2/s"/>

  <Specie name="IP3" id="IP3" kdiff="220." kdiffunit="mu2/s"/>
  <Specie name="IP3K" id="IP3K" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP5P" id="IP5P" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2" id="IP3K_Ca2" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP3" id="IP5P_IP3" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2_IP3" id="IP3K_Ca2_IP3" kdiff="10." kdiffunit="mu2/s"/>


  <Specie name="PKCc" id="PKCc" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="CaPKCc" id="CaPKCc" kdiff="6.61" kdiffunit="mu2/s"/>

  <Specie name="CaPKC" id="CaPKC" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="Ca2PKC" id="Ca2PKC" kdiff="6.61" kdiffunit="mu2/s"/>

  <Specie name="Ca2PKC_act" id="Ca2PKC_act" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="CaPKC_act" id="CaPKC_act" kdiff="6.61" kdiffunit="mu2/s"/>

  <Specie name="Ca2PKC_actDag" id="Ca2PKC_actDag" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaPKC_actDag" id="CaPKC_actDag" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgPA" id="NgPA" kdiff="0" kdiffunit="mu2/s"/>

  
<Reaction name="Glu--GluOut" id="Glu--GluOut">
  	<Reactant specieID="Glu"/>
	<Product specieID="GluOut"/>

  	<forwardRate>0.5e-3</forwardRate>
  	<reverseRate>0.02e-6</reverseRate>
  	<Q10>0.2</Q10>
  </Reaction>

  
   <Reaction name="Glu+MgluR--GluMgluRdesens" id="Glu+MgluR--GluMgluRdesens">
        <Reactant specieID="GluMgluR"/>
        <Product specieID="GluMgluRdesens"/>

        <forwardRate> 0.0625e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <Reaction name="Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="GluMgluR"/>

        <forwardRate> 2e-7 </forwardRate>
        <reverseRate> 0.5e-03      </reverseRate>
    </Reaction>

    <Reaction name="Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="GluMgluR"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate>  0.0009e-03  </forwardRate>
        <reverseRate>   1.36e-03  </reverseRate>
    </Reaction>

  <Reaction name="Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="MgluRGq"/>

        <forwardRate> 4.5e-8 </forwardRate>
        <reverseRate> 0.68e-03 </reverseRate>
   </Reaction>

   <Reaction name="Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluRGq"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate> 0.004e-03 </forwardRate>
        <reverseRate> 1e-03 </reverseRate>
   </Reaction>

   <Reaction name="GluMgluRGq--GqaGTP+GluMgluRGbg" id="GluMgluRGq--GqaGTP+GluMgluRGbg">
        <Reactant specieID="GluMgluRGq"/>
        <Product specieID="GqaGTP"/>
        <Product specieID="GluMgluR"/> 
  
        <forwardRate>  1.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

 

  <Reaction name="Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcCa"/>

    <forwardRate> 0.0005e-03   </forwardRate>
    <reverseRate> 1e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="Plc+GqaGTP--PlcGqaGTP" id="Plc+GqaGTP--PlcGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcGqaGTP"/>

    <forwardRate> 0.0007e-03   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcGqaGTP+Ca--PlcCaGqaGTP" id="PlcGqaGTP+Ca--PlcCaGqaGTP">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 0.0025e-03   </forwardRate>
    <reverseRate> 1.0e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcCa+GqaGTP--PlcCaGqaGTP" id="PlcCa+GqaGTP--PlcCaGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="PlcCa"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 0.0035e-03   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 
  <Reaction name="PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
    <Reactant specieID="PlcCa"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaPip2"/>
    
    <forwardRate> 0.05e-06   </forwardRate>
    <reverseRate> 1.8e-3   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  

  <Reaction name="PlcCaPip2--PlcCaDag+IP3" id="PlcCaPip2--PlcCaDag+IP3">
    <Reactant specieID="PlcCaPip2"/>
    <Product specieID="PlcCa"/>
    <Product specieID="IP3"/>
    <Product specieID="Dag"/>
    <forwardRate> 0.45e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  
  <Reaction name="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2" id="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaGqaGTPPip2"/>
    
    <forwardRate>  1.665e-06   </forwardRate>
    <reverseRate>  60e-03   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3" id="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3">
    <Reactant specieID="PlcCaGqaGTPPip2"/>
    <Product specieID="PlcCaGqaGTP"/>
    <Product specieID="IP3"/>
    <Product specieID="Dag"/>
    <forwardRate> 30e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
  </Reaction>
  <Reaction name="DagKdag1" id="DagKdag1">
    <Reactant specieID="Dag"/>
    <Reactant specieID="DagK"/>
    <Product specieID="DagKdag"/>
    
    <forwardRate> 0.00007e-03      </forwardRate>
    <reverseRate> 0.8e-3         </reverseRate>
  </Reaction>
  
  <Reaction name="DagKdag2" id="DagKdag2">
    <Reactant specieID="DagKdag"/>
    <Product specieID="PA"/>
    <Product specieID="DagK"/>
    
    <forwardRate> 0.2e-03      </forwardRate>
    <reverseRate> 0.0e-03      </reverseRate>
  </Reaction>

<Reaction name="PAPAP1" id="PAPAP1">
    <Reactant specieID="PA"/>
    <Reactant specieID="PAP"/>
    <Product specieID="PAPAP"/>
    
    <forwardRate> 0.132e-08      </forwardRate>
    <reverseRate> 0.02e-3         </reverseRate>
  </Reaction>
  
  <Reaction name="PA_PAP2" id="PA_PAP2">
    <Reactant specieID="PAPAP"/>
    <Product specieID="Dag"/>
    <Product specieID="PAP"/>
    
    <forwardRate> 0.112e-03      </forwardRate>
    <reverseRate> 0.0e-03      </reverseRate>
  </Reaction>

  <Reaction name="NgPAPAP1" id="NgPAPAP1">
    <Reactant specieID="NgPA"/>
    <Reactant specieID="PAP"/>
    <Product specieID="NgPAPAP"/>
    
    <forwardRate> 0.132e-08      </forwardRate>
    <reverseRate> 0.02e-3         </reverseRate>
  </Reaction>
  
  <Reaction name="IP3--IP5P" id="IP3--IP5P">
    <Reactant specieID="IP3"/>
    <Reactant specieID="IP5P"/>
    <Product specieID="IP5P_IP3"/>
    
    <forwardRate> 9e-06      </forwardRate>
    <reverseRate> 72e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3--IP5P-degrad" id="IP3--IP5P-degrad">
    <Reactant specieID="IP5P_IP3"/>
    <Product specieID="IP5P"/>
    <Product specieID="IP3degrad"/>
    <forwardRate> 18e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K--2Ca" id="IP3K--2Ca">
    <Reactant specieID="IP3K"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="IP3K_Ca2"/>
    
    <forwardRate> 1111e-09      </forwardRate>
    <reverseRate> 100e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K2Ca--IP3" id="IP3K2Ca--IP3">
    <Reactant specieID="IP3K_Ca2"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3K_Ca2_IP3"/>

    <forwardRate> 100e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name="IP3K2CaIP3" id="IP3K2CaIP3">
  <Reactant specieID="IP3K_Ca2_IP3"/>
  <Product specieID="IP3degrad"/>
  <Product specieID="IP3K_Ca2"/>

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="IP3degrad + PIkinase -- IP3degPIkinase" id="PIkinase1">
    <Reactant specieID="IP3degrad"/>   
    <Reactant specieID="PIkinase"/>
    <Product specieID="IP3degPIk"/>

    <forwardRate> 2.0e-6    </forwardRate>
    <reverseRate> 1e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="IP3degPIkinase -- PIP2 + PIkinase" id="PIkinase2">
    <Reactant specieID="IP3degPIk"/>
    <Product specieID="PIkinase"/>
    <Product specieID="Pip2"/>

    <forwardRate> 1e-3  </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>    

<Reaction name="PlcGqaGTP--Plc+GqaGDP" id="PlcGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="Plc"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PlcCaGqaGTP--PlcCa+GqaGDP" id="PlcCaGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Product specieID="PlcCa"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>



<Reaction name="GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
    <Reactant specieID="GqaGTP"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   1e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="GqaGDP--Gqabg" id="GqaGDP--Gqabg">
  <Reactant specieID="GqaGDP"/>
  <Product specieID="Gqabg"/>

   <forwardRate>   2e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>



<Reaction name="PKCc+Ca--CaPKCc" id="PKCc+Ca--CaPKCc">
        <Reactant specieID="Ca"/>
        <Reactant specieID="PKCc"/>
        <Product specieID="CaPKCc"/>

        <forwardRate> 13.3e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKCc--CaPKC" id="CaPKCc--CaPKC">
        <Reactant specieID="CaPKCc"/>
        <Product specieID="CaPKC"/>
        <forwardRate> 420e-3   </forwardRate>
        <reverseRate> 17e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKC+Ca--Ca2PKC" id="CaPKC+Ca--Ca2PKC">
        <Reactant specieID="Ca"/>
        <Reactant specieID="CaPKC"/>
        <Product specieID="Ca2PKC"/>

        <forwardRate> 1e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="Ca2PKC--Ca2PKC_act" id="Ca2PKC--Ca2PKC_act">
        <Reactant specieID="Ca2PKC"/>
        <Product specieID="Ca2PKC_act"/>
        <forwardRate> 3e-3   </forwardRate>
        <reverseRate> 5e-3       </reverseRate>
    </Reaction>

    <Reaction name="Ca2PKC_act+Dag--Ca2PKC_actDag" id="Ca2PKC_act+Dag--Ca2PKC_actDag">
        <Reactant specieID="Ca2PKC_act"/>
        <Reactant specieID="Dag"/>
        <Product specieID="Ca2PKC_actDag"/>

        <forwardRate> 0.8e-6   </forwardRate>
        <reverseRate> 1e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKC_actDag+Ca--Ca2PKC_actDag" id="CaPKC_actDag+Ca--Ca2PKC_actDag">
        <Reactant specieID="CaPKC_actDag"/>
        <Reactant specieID="Ca"/>
        <Product specieID="Ca2PKC_actDag"/>

        <forwardRate> 1e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>


      <Reaction name="CaPKC_act+Dag--CaPKC_actDag" id="CaPKC_act+Dag--CaPKC_actDag">
        <Reactant specieID="CaPKC_act"/>
        <Reactant specieID="Dag"/>
        <Product specieID="CaPKC_actDag"/>

        <forwardRate> 0.8e-6   </forwardRate>
        <reverseRate> 1e-3       </reverseRate>
    </Reaction>
    <Reaction name="CaPKC_act+Ca--Ca2PKC_act" id="CaPKC_act+Ca--Ca2PKC_act">
        <Reactant specieID="CaPKC_act"/>
        <Reactant specieID="Ca"/>
        <Product specieID="Ca2PKC_act"/>

        <forwardRate> 1e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

      <Reaction name="CaPKC_act--CaPKC" id="CaPKC_act--CaPKC">
        <Reactant specieID="CaPKC_act"/>
        <Product specieID="CaPKC"/>

        <forwardRate> 5e-6   </forwardRate>
        <reverseRate> 0 </reverseRate>
      </Reaction>

      

<Specie name="IP3R" id="IP3R" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RIP3" id="IP3RIP3" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RO" id="IP3RO" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC" id="IP3RC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC2" id="IP3RC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC3" id="IP3RC3" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="IP3RC4" id="IP3RC4" kdiff="0" kdiffunit="mu2/s"/>
  <Reaction name="IP3R+IP3" id="IP3R+IP3">
    <Reactant specieID="IP3R"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3RIP3"/>

    <forwardRate> 0.00001   </forwardRate>
    <reverseRate> 0.01       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RIP3+Ca" id="IP3RIP3+Ca">
    <Reactant specieID="IP3RIP3"/>
    <Reactant specieID="Ca"/>
    <Product specieID="IP3RO"/>
    
    <forwardRate> 0.00008   </forwardRate>
    <reverseRate> .02    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

   <Reaction name="IP3R+Ca" id="IP3R+Ca">                                                                      
    <Reactant specieID="IP3R"/>                                                                      
    <Reactant specieID="Ca"/>                                                                     
    <Product specieID="IP3RC"/>                                                                 
                                                                                                                
    <forwardRate> 2.22e-6  </forwardRate>                                                                       
    <reverseRate> 5e-3      </reverseRate>                                                                      
    <Q10>         0.2           </Q10>                                                                          
  </Reaction>                                                                                                   
                                                                                                                
  <Reaction name="IP3RC+Ca" id="IP3C+Ca">
  <Reactant specieID="IP3RC"/>
      <Reactant specieID="Ca"/>

    <Product specieID="IP3RC2"/>

    <forwardRate> 4.44e-6   </forwardRate>
    <reverseRate> 10e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RC2+Ca" id="IP3C2+Ca">
    <Reactant specieID="IP3RC2"/>
    <Reactant specieID="Ca"/>
    
    <Product specieID="IP3RC3"/>
    
    <forwardRate> 6.66e-6   </forwardRate>
    <reverseRate> 15e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  <Reaction name="IP3RC3+Ca" id="IP3C3+Ca">
    <Reactant specieID="IP3RC3"/>
    <Reactant specieID="Ca"/>
    
    <Product specieID="IP3RC4"/>
    
    <forwardRate> 8.88e-6   </forwardRate>
    <reverseRate> 20e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
 
<Reaction name="IP3R_Ob-flux_Ia" id="IP3R_Ob-fluxa">
    <Reactant specieID="IP3RO"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3RO"/>
    <Product specieID="Ca"/>

    <forwardRate> 5.555666666666666e-05 </forwardRate>
    <reverseRate> 1.8518888888888888e-05      </reverseRate>
    <Q10>   0.2   </Q10>
   </Reaction>
    

 <Specie name="PMJ" id="PMJ" kdiff="0." kdiffunit="mu2/s"/>
  <Specie name="PMJ_STIM_4" id="PMJ_STIM_4" kdiff="0." kdiffunit="mu2/s"/>
    
  <Specie name="Orai3STIM_4" id="Orai3STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai2STIM_4" id="Orai2STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="OraiSTIM_4" id="OraiSTIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai" id="Orai" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="STIM_4" id="STIM_4" kdiff="0.01" kdiffunit="mu2/s"/>
  <Specie name="STIM_2" id="STIM_2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="STIM_2CaER" id="STIM_2CaER" kdiff="0" kdiffunit="mu2/s"/>
 
  <Reaction name="SOCE1" id="SOCE1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai3STIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <Product specieID="Ca"/>
    
    <forwardRate>5e-8</forwardRate>
    <reverseRate>5e-8</reverseRate>
  </Reaction>
  <Reaction name="SOCE2" id="SOCE2">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai2STIM_4"/>
    <Product specieID="Orai2STIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-9</forwardRate>
    <reverseRate>1.5e-9</reverseRate>
  </Reaction>

 <Reaction name="SOCE3" id="SOCE3">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-11</forwardRate>
    <reverseRate>1.5e-11</reverseRate>
  </Reaction>
   

  <Reaction name="STIM_dim_1" id="STIM_dim_1">
    <Reactant specieID="STIM_2" power="2"/>
    <Product specieID="STIM_4"/>
    <forwardRate>4.8e-7</forwardRate>
    <reverseRate>11e-5</reverseRate>
  </Reaction>
  

  <Reaction name="STIMCaER_1" id="STIMCaER_1">
    <Reactant specieID="STIM_2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="STIM_2CaER"/>
    <forwardRate>8e-7</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ" id="STIM_PMJ">
    <Reactant specieID="STIM_4"/>
    <Reactant specieID="PMJ"/>
    <Product specieID="PMJ_STIM_4"/>
    <Product specieID="PMJ"/>
    <forwardRate>1.8e-4</forwardRate>
    <reverseRate>3e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ_Orai" id="STIM_PMJ_Orai">
    <Reactant specieID="Orai"/>
    <Reactant specieID="PMJ_STIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <forwardRate>1.5e-04</forwardRate>
    <reverseRate>8e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai2" id="STIM_Orai2">
    <Reactant specieID="OraiSTIM_4" power="2"/>
    <Product specieID="Orai2STIM_4"/>
    <forwardRate>3.75e-5</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai4" id="STIM_Orai4">
    <Reactant specieID="Orai2STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <forwardRate>9.375e-06</forwardRate>
    <reverseRate>5e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai8" id="STIM_Orai8">
    <Reactant specieID="Orai3STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai2STIM_4" power="2"/>
    <forwardRate>9.375e-06</forwardRate>

  </Reaction>

  
</ReactionScheme>
