<?xml version="1.0"?>
<ReactionScheme> 
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaOut" id="CaOut" kdiff="10" kdiffunit="mu2/s" />
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s" />
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s" />
  
 
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s" />
  <!-- model and constants from Paszty et al 2015 DOI:  10.1126/scisignal.2005672-->
  <Specie name="pmca1a" id="pmca1a" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="pmca1aCa" id="pmca1aCa" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="CaMCa4pmca1a" id="CaMCa4pmca1a" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="CaMCa4pmca1aCa" id="CaMCa4pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca1a" id="CaMpmca1a" kdiff="0" kdiffunit="mu2/s" /> 

  <Specie name="Pkc"            id="Pkc"           kdiff="6.61"    kdiffunit="mu2/s"/>
  <Specie name="PkcCa"          id="PkcCa"         kdiff="6.61"    kdiffunit="mu2/s"/>
  <Specie name="PkcCaNg"          id="PkcCaNg"         kdiff="6.61"    kdiffunit="mu2/s"/>
  <Specie name="PkcCaNgPA"          id="PkcCaNgPA"         kdiff="0"    kdiffunit="mu2/s"/>

  <Specie name="Ng" id="Ng" kdiff="5" kdiffunit="mu2/s" />
  <Specie name="pNg" id="pNg" kdiff="5" kdiffunit="mu2/s" />
  <Specie name="NgCaM" id="NgCaM" kdiff="3" kdiffunit="mu2/s" />
  <Specie name="PA" id="PA" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="NgPA" id="NgPA" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="pNgPA" id="pNgPA" kdiff="0" kdiffunit="mu2/s" />
  
  <!-- -->
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaM1N" id="CaM1N" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaM2N" id="CaM2N" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaM1C" id="CaM1C" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaM1C1N" id="CaM1C1N" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaM1C2N" id="CaM1C2N" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaM2C" id="CaM2C" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaM2C1N" id="CaM2C1N" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaMCa4"  id="CaMCa4" kdiff="4" kdiffunit="mu2/s" />

  <!--Calmodulin-->
  
  <!-- 4 Ca bound Calmodulin-->
  <!-- -->

  <!--Hindered cytoplasmic diffusion of
	  inositol trisphosphate restricts its cellular range of
	  action     George D. Dickinson1,*, Kyle L. Ellefsen1,
	  Silvina Ponce Dawson2, John E. Pearson3, and Ian Parker1,4
	  Sci signalling -->
  <!--*************************************************************************
  Now, the reactions themselves   SAME means params are same in both files
  **************************************************************************-->
  <!--I. *********** Ca pump and buffer rxns  ************* -->
  <!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->

  <!--pmca1a is based on pmca4a from Paszty et al 2015 Science Signaling-->
  <Reaction name = "Ca_pump1a_1" id="Ca_pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="pmca1aCa"/>

    <forwardRate>10e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

 
  <Reaction name = "Ca_pump1a_2" id="Ca_pump1a_2">
    <Reactant specieID="pmca1aCa"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name = "Ca_CaMCa4pump1a_1" id="Ca_CaMCa4pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMCa4pmca1aCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

 
  <Reaction name = "Ca_CaMCa4pump1a_2" id="Ca_CaMCa4pump1a_2">
    <Reactant specieID="CaMCa4pmca1aCa"/>
    <Product specieID="CaMCa4pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  

  <Reaction name = "CaMCa4pump1a_bind" id="CaMCa4pump1a_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="CaMCa4pmca1a"/>

    <forwardRate>0.8e-6</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>

  


  <Reaction name = "CaMCa4pump1a_Ca_unbind" id="CaMCa4pump1a_Ca_unbind">
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMpmca1a"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0957e-3</forwardRate>
    <reverseRate>1.006e-15</reverseRate>
  </Reaction>

 
 

  <Reaction name = "CaMpump1a_Ca_unbind" id="CaMpump1a_Ca_unbind">
    <Reactant specieID="CaMpmca1a"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaM"/>
    <forwardRate>0.0614e-3</forwardRate>

  </Reaction>


  
  <!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
  <Reaction name = "Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
  <Reaction name = "Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
  <Reaction name = "Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
  <Reaction name = "Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <!-- fixed immobile buffer-->
  <Reaction name = "Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <!-- Adapt Pepke's course model with rates fitted by Linkevicius et al 2026) -->
   <!--This is the C site-->
 

  <Reaction name="reaction1" id="reaction1">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM" />
    <Product specieID="CaM1C" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction3" id="reaction3">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM1N" />
    <Product specieID="CaM1C1N" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction5" id="reaction5">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM2N" />
    <Product specieID="CaM1C2N" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction7" id="reaction7">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM1C" />
    <Product specieID="CaM2C" />
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction9" id="reaction9">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM1C1N" />
    <Product specieID="CaM2C1N" />
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction11" id="reaction11">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM1C2N" />
    <Product specieID="CaMCa4" />
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction13" id="reaction13">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM" />
    <Product specieID="CaM1N" />
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction15" id="reaction15">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM1N" />
    <Product specieID="CaM2N" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction17" id="reaction17">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM1C" />
    <Product specieID="CaM1C1N" />
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction19" id="reaction19">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM1C1N" />
    <Product specieID="CaM1C2N" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction21" id="reaction21">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM2C" />
    <Product specieID="CaM2C1N" />
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction23" id="reaction23">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaM2C1N" />
    <Product specieID="CaMCa4" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <!-- Kubota, Putkey, Waxham, 2007, Biophys J, 92:3848-3859, constants
       k5 and k_5-->
  <!--2a) CaM  + Ng
      <-> NgCaM -->
  <!--I step of the Neurogranin -->
  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM" />
    <Reactant specieID="Ng" />
    <Product specieID="NgCaM" />
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

<!-- kd = 83 nM 
https://doi.org/10.1042/BJ20061483
-->
  <Reaction name="NgPA_bind" id="NgPA_bind">
    <Reactant specieID="PA" />
    <Reactant specieID="Ng" />
    <Product specieID="NgPA" />
    <forwardRate>0.00036</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="pNgPA_bind" id="pNgPA_bind">
    <Reactant specieID="PA" />
    <Reactant specieID="pNg" />
    <Product specieID="pNgPA" />
    <forwardRate>0.00036e-2</forwardRate>
    <reverseRate>36.e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
      

<!-- These are values from Hellgren Kotaleski PKC paper. 2.5 uM affinity -->
    <!-- Pkc + Ca    <->   PkcCa  -->
    <Reaction name = "Pkc+Ca--PkcCa" id="Pkc+Ca--PkcCa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="Pkc"              />
        <Product  specieID="PkcCa"               />

        <forwardRate> 0.020e-03   </forwardRate>
        <reverseRate> 50e-03        </reverseRate>
    </Reaction>

  <!-- PkcCa+Ng    <->   PkcCaNg  -->
    <Reaction name = "PkcCa +Ng--PkcCaNg" id="PkcCa+Ng--PkcCaNg">
        <Reactant specieID="PkcCa"           />
        <Reactant specieID="Ng"              />
        <Product  specieID="PkcCaNg"               />

        <forwardRate> 2.48e-5   </forwardRate>
        <reverseRate> 0.15e-03        </reverseRate>
    </Reaction>
    <Reaction name = "PkcCaNgphos" id="PkcCaNgphos">
        <Reactant specieID="PkcCaNg"           />
        <Product  specieID="pNg"              />
        <Product  specieID="PkcCa"               />

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>
  <!-- PkcCa+Ng    <->   PkcCaNg  -->
    <Reaction name = "PkcCa +Ng--PkcCaNg" id="PkcCa+Ng--PkcCaNg">
        <Reactant specieID="PkcCa"           />
        <Reactant specieID="NgPA"              />
        <Product  specieID="PkcCaNgPA"               />

        <forwardRate> 2.48e-5   </forwardRate>
        <reverseRate> 0.15e-03        </reverseRate>
    </Reaction>
    <Reaction name = "PkcCaNgPAphos" id="PkcCaNgPAphos">
        <Reactant specieID="PkcCaNgPA"           />
        <Product  specieID="pNgPA"              />
        <Product  specieID="PkcCa"               />

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>
    
</ReactionScheme>
 
