<ReactionScheme>
  <!--use
Competitive tuning: Competition's role in setting the frequency-dependence of Ca2+-dependent proteins TKU is the senior author
Adjust Ca binding to PP2BCaMiCjN according to the thermodynamic principle of microscopic reversibility, because we're using CaM-Ca model adjusted to Linkevicius's rates-->

  <Specie name="PP2B" id="PP2B" kdiff="0.61" kdiffunit="mu2/s" />
  <Specie name="PP2BCaM" id="PP2BCaM" kdiff="0.61" kdiffunit="mu2/s" />
  <Specie name="PP2BCaM1C" id="PP2BCaM1C" kdiff="0.61" kdiffunit="mu2/s" />
  <Specie name="PP2BCaM1N" id="PP2BCaM1N" kdiff="0.61" kdiffunit="mu2/s" />
  <Specie name="PP2BCaM2C" id="PP2BCaM2C" kdiff="0.61" kdiffunit="mu2/s" />
  <Specie name="PP2BCaM2N" id="PP2BCaM2N" kdiff="0.61"
	  kdiffunit="mu2/s" />
  <Specie name="PP2BCaM1C1N" id="PP2BCaM1C1N" kdiff="0.61" kdiffunit="mu2/s" />
  <Specie name="PP2BCaM1C2N" id="PP2BCaM1C2N" kdiff="0.61" kdiffunit="mu2/s" />
  <Specie name="PP2BCaM2C1N" id="PP2BCaM2C1N" kdiff="0.61" kdiffunit="mu2/s" />
  <Specie name="PP2BCaMCa4" id="PP2BCaMCa4" kdiff="0.61"
	  kdiffunit="mu2/s" />
  
  <!-- CaM, CaMCa4 and PP2B Binding -->
  <!--1) CaM  + 2Ca
      <-> CaMCa2 -->
  <!--This is the C site-->
  <!--1A) CaM  + 2Ca <-> CaM2C GQ RXN FILE, C or N can bind first-->
  
 <!-- Stefan, Edelstein and Le Novere 2008 PNAS do not speed up Ca binding to PP2BCaM -->
  <!--4A) CaM2C    +   PP2B    <->  PP2BCaM2C (in xpp: k33c=1 k_33c=0.3) -->
  <Reaction name = "CaM+PP2B--PP2BCaM reac" id="CaM+PP2B--PP2BCaM_id">
    <Reactant specieID="CaM"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaM"             />
    
    <forwardRate> 7.98e-13 </forwardRate>
    <reverseRate>  3.19e-6    </reverseRate>
  </Reaction>


  <!--4C) CaM1C    +   PP2B    <->  PP2BCaM1C (in xpp: k33c=1 k_33c=0.3) -->
  <Reaction name = "CaM1C+PP2B--PP2BCaM1C reac" id="CaM1C+PP2B--PP2BCaM1C_id">
    <Reactant specieID="CaM1C"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaM1C"             />
    
    <forwardRate> 1.334e-10       </forwardRate>
    <reverseRate> 3.19e-6  </reverseRate>
  </Reaction>

    <!--4C) CaM2C    +   PP2B    <->  PP2BCaM2C (in xpp: k33c=1 k_33c=0.3) -->
  <Reaction name = "CaM2C+PP2B--PP2BCaM2C reac" id="CaM2C+PP2B--PP2BCaM2C_id">
    <Reactant specieID="CaM2C"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaM2C"             />
    
    <forwardRate>   1.23e-9     </forwardRate>
    <reverseRate>  3.19e-6     </reverseRate>
  </Reaction>
  
  <!--4N) CaM1N    +   PP2B    <->  PP2BCaM1N (in xpp: k33c=1 k_33c=0.3) -->
  <Reaction name = "CaM1N+PP2B--PP2BCaM1N reac" id="CaM1N+PP2B--PP2BCaM1N_id">
    <Reactant specieID="CaM1N"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaM1N"             />
    
    <forwardRate> 6.65e-11     </forwardRate>
    <reverseRate>  3.19e-6     </reverseRate>
  </Reaction>

  <!--4N) CaM2N    +   PP2B    <->  PP2BCaM2N (in xpp: k33c=1 k_33c=0.3) -->
  <Reaction name = "CaM2N+PP2B--PP2BCaM2N reac" id="CaM2N+PP2B--PP2BCaM2N_id">
    <Reactant specieID="CaM2N"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaM2N"             />
    
    <forwardRate> 4.16e-9  </forwardRate>
    <reverseRate> 3.19e-6 </reverseRate>
  </Reaction>


  <!--7x) CaM1C1N    +  PP2B    <->  PP2BCaM1C1N -->
  <Reaction name = "CaM1C1N+PP2B--PP2BCaM1C1N reac" id="CaM1C1N+PP2B--PP2BCaM1C1N_id">
    <Reactant specieID="CaM1C1N"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaM1C1N"             />
    
    <forwardRate> 6.65e-9       </forwardRate>
    <reverseRate>  3.19e-6     </reverseRate>
  </Reaction>

  <!--7x) CaM2C1N    +  PP2B    <->  PP2BCaM2C1N -->
  <Reaction name = "CaM2C1N+PP2B--PP2BCaM2C1N reac" id="CaM2C1N+PP2B--PP2BCaM2C1N_id">
    <Reactant specieID="CaM2C1N"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaM2C1N"             />
    
    <forwardRate> 1.02e-7       </forwardRate>
    <reverseRate>  3.19e-6     </reverseRate>
  </Reaction>

  <!--7x) CaM1C2N    +  PP2B    <->  PP2BCaM1C2N -->
  <Reaction name = "CaM1C2N+PP2B--PP2BCaM1C2N reac" id="CaM1C2N+PP2B--PP2BCaM1C2N_id">
    <Reactant specieID="CaM1C2N"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaM1C2N"             />
    
    <forwardRate> 4.16e-7 </forwardRate>
    <reverseRate>  3.19e-6</reverseRate>
  </Reaction>

  <!--7x) CaMCa4    +  PP2B    <->  PP2BCaMCa4 -->
  <Reaction name = "CaMCa4+PP2B--PP2BCaMCa4 reac" id="CaMCa4+PP2B--PP2BCaMCa4_id">
    <Reactant specieID="CaMCa4"                 />
    <Reactant specieID="PP2B"                   />
    <Product  specieID="PP2BCaMCa4"             />
    
    <forwardRate> 6.4e-6       </forwardRate>
    <reverseRate> 3.19e-6      </reverseRate>
  </Reaction>

  <!-- PP2BCaM +  Ca2     <->  PP2BCaM, either N site or C site -->
  

  <Reaction name="PP2Breaction1" id="PP2Breaction1">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM" />
    <Product specieID="PP2BCaM1C" />
    <forwardRate>0.00356</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction3" id="PP2Breaction3">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM1N" />
    <Product specieID="PP2BCaM1C1N" />
    <forwardRate>0.002137</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  
  <Reaction name="PP2Breaction5" id="PP2Breaction5">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM2N" />
    <Product specieID="PP2BCaM1C2N" />
    <forwardRate>0.0021375</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction7" id="PP2Breaction7">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM1C" />
    <Product specieID="PP2BCaM2C" />
    <forwardRate>0.0088055</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction9" id="PP2Breaction9">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM1C1N" />
    <Product specieID="PP2BCaM2C1N" />
    <forwardRate>0.01465</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction11" id="PP2Breaction11">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM1C2N" />
    <Product specieID="PP2BCaMCa4" />
    <forwardRate>0.01469</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction13" id="PP2Breaction13">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM" />
    <Product specieID="PP2BCaM1N" />
    <forwardRate>0.89292</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction15" id="PP2Breaction15">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM1N" />
    <Product specieID="PP2BCaM2N" />
    <forwardRate>0.12199</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction17" id="PP2Breaction17">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM1C" />
    <Product specieID="PP2BCaM1C1N" />
    <forwardRate>0.5341</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction19" id="PP2Breaction19">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM1C1N" />
    <Product specieID="PP2BCaM1C2N" />
    <forwardRate>0.12199</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction21" id="PP2Breaction21">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM2C" />
    <Product specieID="PP2BCaM2C1N" />
    <forwardRate>0.8886</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction23" id="PP2Breaction23">
    <Reactant specieID="Ca" />
    <Reactant specieID="PP2BCaM2C1N" />
    <Product specieID="PP2BCaMCa4" />
    <forwardRate>0.122</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

</ReactionScheme>
