<?xml version="1.0"?>
<ReactionScheme>

  
  <!-- IP3R Model based on Fraiman D, Dawson SP (2004) A model of IP3 receptor with a luminal
       calcium binding site: stochastic simulations and analysis. Cell
       Calcium 35: 403-413, 2004 -->
  
  <!-- Receptor States:
       IP3R  state
       IP3RO  state
       IP3RIP3  bound IP3R
       IP3RC  bound IP3R
       IP3RC2
       IP3RC3
       IP3RC4
       
  -->
  <!-- you can specify the units of the diffusion constant. If they are not specified they are assumed to be micron^2/second, (microns written "mu" here) it should understand microns, mm, and m for distances and seconds and ms for times -->
  <!-- This code is implemented CaMKII_bimols Rns -0.44, 0.28, 0.088. Fix 3 products 2rxns break down to 2nd order rxn : LbARG/Ip35P1P2 -->
  <!-- last rxn of Ip35p1p2 was wrong reactant:fixed on Aug,8th,2008
   Chosen katp=1 sec(not 10 sec) is enough   -->
  <!-- Suggested by avrama Ca kdiff=600 for helping fast decay on Feb.24th 2009-->

  <!--TODO add bAR desensitization!-->
  <Specie name="Ca" id="Ca" kdiff="174.3" kdiffunit="mu2/s" />
  <Specie name="CaOut" id="CaOut" kdiff="3." kdiffunit="mu2/s" />
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="CaOutERLeak" id="CaOutERLeak" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="LeakToER" id="LeakToER" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s" />
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s" />
  
  <Specie name="pmca" id="pmca" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="pmcaCa" id="pmcaCa" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s" />
 
  <Specie name="CaER" id="CaER" kdiff="0." kdiffunit="mu2/s"/>
  
  <Specie name="CaERLeak" id="CaERLeak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="SERCA" id="SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_Ca" id="SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_Ca2" id="SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>

  
  <!--calreticulin-->
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>


  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s" />
  <!-- -->
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s" />
  <!--Calmodulin-->
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s" />
 
  <!-- 2 Ca bound Calmodulin-->
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s" />
  <!-- 4 Ca bound Calmodulin-->
  <!-- -->
  <Specie name="GluBuf" id="GluBuf" kdiff="1" kdiffunit="mu2/s" />

  <!-- Add mGluRs from Blackwell's model -->
  <Specie name="Glu"            id="Glu"           kdiff="100"   kdiffunit="mu2/s"/>
  <Specie name="GluOut"         id="GluOut"        kdiff="100"   kdiffunit="mu2/s"/>
  <Specie name="MgluR"          id="MgluR"         kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluR"       id="GluMgluR"      kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluRdesens" id="GluMgluRdesens" kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="MgluRGq"        id="MgluRGq"       kdiff="0"     kdiffunit="mu2/s"/> 
  <Specie name="Gqabg"          id="Gqabg"         kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluRGq"     id="GluMgluRGq"    kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GqaGTP"         id="GqaGTP"        kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GqaGDP"         id="GqaGDP"        kdiff="0"     kdiffunit="mu2/s"/>  

  <Specie name="PLC"             id="PLC"             kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PLCCa"           id="PLCCa"           kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PLCCaGqaGTP"     id="PLCCaGqaGTP"     kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PLCGqaGTP"       id="PLCGqaGTP"       kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="Pip2"            id="Pip2"            kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PLCCaPip2"       id="PLCCaPip2"       kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PLCCaGqaGTPPip2" id="PLCCaGqaGTPPip2"  kdiff="0"    kdiffunit = "mu2/s"/>
 
  
  <Specie name="PIkinase"      id="PIkinase"      kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="Ip3degPIk"     id="Ip3degPIk"   kdiff="0"    kdiffunit = "mu2/s"/>
  
  <Specie name="Ip3degrad"     id="Ip3degrad"           kdiff="10.6"    kdiffunit = "mu2/s"/>

  <Specie name="IP3R"          id="IP3R"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RIP3"          id="IP3RIP3"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RO"           id="IP3RO"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC"           id="IP3RC"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC2"                  id="IP3RC2"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC3"                  id="IP3RC3"           kdiff="0"     kdiffunit="mu2/s"/>

  <Specie name="IP3RC4"          id="IP3RC4"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3"            id="IP3"           kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="DAG"       id="DAG"   kdiff="0"    kdiffunit="mu2/s"/>
  
  <!--Hindered cytoplasmic diffusion of
	  inositol trisphosphate restricts its cellular range of
	  action     George D. Dickinson1,*, Kyle L. Ellefsen1,
	  Silvina Ponce Dawson2, John E. Pearson3, and Ian Parker1,4
	  Sci signalling -->
  <!--*************************************************************************
  Now, the reactions themselves   SAME means params are same in both files
  **************************************************************************-->
  <!--I. *********** Ca pump and buffer rxns  ************* -->
  <!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
  <Reaction name = "Ca_pump1a" id="Ca_pump1a">
<Reactant specieID="Ca"/>
<Reactant specieID="pmca"/>
<Product specieID="pmcaCa"/>

<forwardRate>0.5e-4</forwardRate>
<reverseRate>0.007</reverseRate>
  </Reaction>

  <!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
  <Reaction name = "Ca_pump1b" id="Ca_pump1b">
<Reactant specieID="pmcaCa"/>
<Product specieID="pmca"/>
<Product specieID="CaOut"/>

<forwardRate>0.0035</forwardRate>
<reverseRate>0</reverseRate>
  </Reaction>

  <!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
  <Reaction name = "Ca_pump2a" id="Ca_pump2a">
<Reactant specieID="Ca"/>
<Reactant specieID="ncx"/>
<Product specieID="ncxCa"/>

<forwardRate>1.68e-5</forwardRate>
<reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
  <Reaction name = "Ca_pump2b" id="Ca_pump2b">
<Reactant specieID="ncxCa"/>
<Product specieID="ncx"/>
<Product specieID="CaOut"/>

<forwardRate>0.0056</forwardRate>
<reverseRate>0</reverseRate>
  </Reaction>
  <!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
  <Reaction name = "Ca_leak1" id="Ca_leak1">
<Reactant specieID="CaOut"/>
<Reactant specieID="Leak"/>
<Product specieID="CaOutLeak"/>

<forwardRate>1.5e-6</forwardRate>
<reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak2" id="Ca_leak2">
<Reactant specieID="CaOutLeak"/>
<Product specieID="Ca"/>
<Product specieID="Leak"/>

<forwardRate>1.1e-3</forwardRate>
<reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name = "Ca_leak_toER" id="Ca_leak_toER">
<Reactant specieID="CaOut"/>
<Reactant specieID="LeakToER"/>
<Product specieID="CaOutERLeak"/>

<forwardRate>1.5e-8</forwardRate>
<reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak_toER2" id="Ca_leak_toER2">
<Reactant specieID="CaOutERLeak"/>
<Product specieID="CaER"/>
<Product specieID="LeakToER"/>

<forwardRate>1.1e-3</forwardRate>
<reverseRate>0</reverseRate>
  </Reaction>

  <!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
  <Reaction name = "Ca_buffer" id="Ca_Buffer">
<Reactant specieID="Ca"/>
<Reactant specieID="Calbin"/>
<Product specieID="CalbinC"/>

<forwardRate>2.8e-5</forwardRate>
<reverseRate>0.0196</reverseRate>
  </Reaction>
   <!-- fixed immobile buffer-->
<Reaction name = "Ca_fixedbuffer" id="Ca_fixedBuffer">
<Reactant specieID="Ca"/>
<Reactant specieID="fixedbuffer"/>
<Product specieID="fixedbufferCa"/>
<forwardRate>0.004e-1</forwardRate>
<reverseRate>20.0</reverseRate>
<Q10>0.2</Q10>
</Reaction>
  
<!-- CaM, CaMCa4 and PP2B Binding -->
<!--1) CaM  + 2Ca
<-> CaMCa2 -->
<!--This is the C site-->
<Reaction name="CaMC_bind" id="CaMC_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="CaMCa2C" />
  <forwardRate>6e-6</forwardRate>
  <reverseRate>9.1e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--2) CaMCa2  + 2Ca
<-> CaMCa4 -->
<!--This is the N-site-->
<Reaction name="CaMCa2C_bind" id="CaMCa2C_bind">
  <Reactant specieID="CaMCa2C" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="CaMCa4" />
  <forwardRate>0.1e-3</forwardRate>
  <reverseRate>1000e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--1B) CaM  + 2Ca <-> CaMCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMN_bind" id="CaMN_bind">
	<Reactant specieID="CaM"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CaMCa2N  + 2Ca <-> CaMCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMCa2N_bind" id="CaMCa2N_bind">
	<Reactant specieID="CaMCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>

<!-- Kubota, Putkey, Waxham, 2007, Biophys J, 92:3848-3859, constants
 k5 and k_5-->
<!--2a) CaM  + Ng
<-> NgCaM -->
<!--I step of the Neurogranin -->
<Reaction name="NgCaM_bind" id="NgCaM_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="Ng" />
  <Product specieID="NgCaM" />
  <forwardRate>28.e-6</forwardRate>
  <reverseRate>36.e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!-- Added by Tuomo -->
<!-- The following reactions from https://senselab.med.yale.edu/modeldb/showmodel.cshtml?model=154967&file=%2fkimetal2013%2fmglu_2AG_reac12mar20desens025bapta.xml#tabs-2 -->

<!-- check thermodynamic equilibrium of next four reactions: NO GOOD.  Decrease affinity of PLC-GaGTP for Ca to 500 -->
<!-- PLC + Ca    <->   PLCCa  6000 nM-->
<!--AB: this is REALLY fast - as fast as Cam binding to calcium.  Might want to slow down both calcium binding steps?
    Yes, by 5x (no change affinity) Nov 30.  Keep affinity of PLC for Ca = 6 uM (low) -->




<!-- CA, PLC, Gq reactions are thermodynamically balanced JJS -->
<Reaction name = "PLC+Ca--PLCCa" id="PLC+Ca--PLCCa">
    <Reactant specieID="Ca"           />
    <Reactant specieID="PLC"              />
    <Product  specieID="PLCCa"               />

    <forwardRate> 0.0005e-03   </forwardRate>
    <reverseRate> 1e-03        </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>
 
<!-- PLC + GqaGTP    <->   PLCGqaGTP 1200 nM -->
<!--AB: Falkenburger 2010 uses 0.71e-3 for reverse rate --> 
<!--Kf is 10x lower for PLC - GqaGTP than Jan31 reac -->
<Reaction name = "PLC+GqaGTP--PLCGqaGTP" id="PLC+GqaGTP--PLCGqaGTP">
    <Reactant specieID="GqaGTP"           />
    <Reactant specieID="PLC"              />
    <Product  specieID="PLCGqaGTP"               />

    <forwardRate> 0.0007e-03   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- PLCGqaGTP + Ca    <->   PLCCaGqaGTP  500 nM-->
<Reaction name = "PLCGqaGTP+Ca--PLCCaGqaGTP" id="PLCGqaGTP+Ca--PLCCaGqaGTP">
    <Reactant specieID="Ca"           />
    <Reactant specieID="PLCGqaGTP"              />
    <Product  specieID="PLCCaGqaGTP"               />

    <forwardRate> 0.0025e-03   </forwardRate>
    <reverseRate> 1.0e-03        </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- PLCCa + GqaGTP    <->   PLCCaGqaGTP  100 nM-->
<!--decrease these rates Nov 30 (same affinity) by 3x -->
<!--Kf is 10x lower for PLC - GqaGTP than Jan31 reac --> <!--Tuomo: used rates from Kim et al. 2013-->
<Reaction name = "PLCCa+GqaGTP--PLCCaGqaGTP" id="PLCCa+GqaGTP--PLCCaGqaGTP">
    <Reactant specieID="GqaGTP"           />
    <Reactant specieID="PLCCa"              />
    <Product  specieID="PLCCaGqaGTP"               />

    <forwardRate> 0.0035e-03   </forwardRate>
    <reverseRate>0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

 
   <!-- PLCCa + Pip2    <-> PLCCaPip2    -->
<!--No affinities for Pip2 are found in literature.  ALso, backward rate is very low compared to kcat
This will initiall have small effect on Km, but might slow down IP3 production.
Incraese Kb by 5x to decrease Ip3 production-->
<!-- Decrease Kf by 10x to compensate for 10x inc in Pip2-->
<!-- decrease the next two set of rates 5x overall since too much Pip2 is being hydrolyzed at basal calcium Nov 30 -->
<Reaction name = "PLCCa+Pip2--PLCCaPip2" id="PLCCa+Pip2--PLCCaPip2">
    <Reactant specieID="PLCCa"               />
    <Reactant specieID="Pip2"             />
    <Product  specieID="PLCCaPip2"            />

    <forwardRate> 0.05e-06   </forwardRate>
    <reverseRate> 1.8e-3   </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>
  

<!-- PLCCaPip2      <-> PLCCaDAG + Ip3 -->  <!--Tuomo: used rate from Blackwell et al. 2018-->
<Reaction name = "PLCCaPip2--PLCCaDAG+Ip3" id="PLCCaPip2--PLCCaDAG+Ip3">
    <Reactant specieID="PLCCaPip2"            />
    <Product  specieID="PLCCa"               />
    <Product  specieID="IP3"            />
    <Product  specieID="DAG"            />

    <forwardRate> 0.45e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>
  
<!-- PLCCaGqaGTP + Pip2    <-> PLCCaGqaGTPPip2    -->
<!-- Decrease Kf by 10x to compensate for 10x inc in Pip2-->
<!-- Decrease rates by 2x to maintain 10x enhancement by GqaGTP Nov 30
Increse Kb by 5x to decrease Ip3 production-->
<Reaction name = "PLCCaGqaGTP+Pip2--PLCCaGqaGTPPip2" id="PLCCaGqaGTP+Pip2--PLCCaGqaGTPPip2">
    <Reactant specieID="PLCCaGqaGTP"               />
    <Reactant specieID="Pip2"             />
    <Product  specieID="PLCCaGqaGTPPip2"            />

    <forwardRate>  1.665e-06   </forwardRate>
    <reverseRate>  60e-03   </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>
  
<!-- PLCCaGqaGTPPip2       <-> PLCCaGqaGTPDAG + Ip3 -->
<Reaction name = "PLCCaGqaGTPPip2--PLCCaGqaGTPDAG+Ip3" id="PLCCaGqaGTPPip2--PLCCaGqaGTPDAG+Ip3">
    <Reactant specieID="PLCCaGqaGTPPip2"            />
    <Product  specieID="PLCCaGqaGTP"               />
    <Product  specieID="DAG"            />
    <Product  specieID="IP3"            />

    <forwardRate> 30e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
</Reaction>

  
<!--  What if PIP2 can only be regenerated from degraded IP3 by membrane molecule.
Thus, initialize PIkinase in the membrane only. 
No idea what these rates should be.  Try different values to obtain equilibirum at basal
These rates interact with PIkinase quantity. Affinity started at 1 uM
Discovered mistake!!! specified PIkinase as product, not reactant!-->

<!--  Ip3    <-> Ip3degrad          Degraded IP3-->
<Reaction name = "Ip3--Ip3degrad" id="Ip3--Ip3degrad">
     <Reactant specieID="IP3"            />
    <Product  specieID="Ip3degrad"        />

    <forwardRate> 0.66e-03      </forwardRate>
    <reverseRate> 0.0e-03      </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

   <Reaction name = "Ip3degrad + PIkinase -- Ip3degPIkinase" id="PIkinase1">
    <Reactant specieID="Ip3degrad"            />   
    <Reactant specieID="PIkinase"               />
    <Product  specieID="Ip3degPIk"            />

    <forwardRate> 2.0e-6    </forwardRate>
    <reverseRate> 1e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- Initial rate from PI5kinase from Falkenburger, increased to compensate for lower reactant quantity -->
   <Reaction name = "Ip3degPIkinase -- PIP2 + PIkinase" id="PIkinase2">
    <Reactant specieID="Ip3degPIk"            />
    <Product  specieID="PIkinase"               />
    <Product  specieID="Pip2"            />

    <forwardRate> 1e-3  </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>    

<!-- GAP activity - only with PLC bound neither to calcium nor PIP2 -->
<!-- PLCGqaGTP       <-> PLC + Gqabg -->
<!-- When PLC hydrolyzes GqaGTP, the GqaGDP immediately binds to Gqbg to regenerate Gqabg
	 This saves two reactions: not only the rebinding, but also Gqbg dissociating from the mGluR after GqaGTP
	 Given the speed of the rebinding and dissociation in previous models, this is a wise choice
	 However, it prevents depletion of Gqabg! -->
<Reaction name = "PLCGqaGTP--PLC+GqaGDP" id="PLCGqaGTP--PLC+GqaGDP">
    <Reactant specieID="PLCGqaGTP"            />
    <Product  specieID="PLC"               />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- Gqap activity of PLCCa -->
<Reaction name = "PLCCaGqaGTP--PLCCa+GqaGDP" id="PLCCaGqaGTP--PLC+GqaGDP">
    <Reactant specieID="PLCCaGqaGTP"            />
    <Product  specieID="PLCCa"               />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- Hydrolysis of GqaGTP - slower than GAP activity-->
<Reaction name = "GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
    <Reactant specieID="GqaGTP"            />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   1e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- 1st order regeneration of Gqabg 
avoids the need to generate Gqbg, and have them react-->
<Reaction name = "GqaGDP--Gqabg" id="GqaGDP--Gqabg">
  <Reactant specieID="GqaGDP"            />
  <Product  specieID="Gqabg"            />

   <forwardRate>   2e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- GluR reactions with Glutamate and Gq-proteins -->
<!--III. *********** Gq coupled receptor, from GQ RXN FILE *************-->
   <!--0a. GluOut    Glu <-> GluOut>  -->
  <Reaction name = "Glu--GluOut" id="Glu--GluOut">
  	<Reactant specieID="Glu"/>
	<Product specieID="GluOut"/>

  	<forwardRate>0.5e-3</forwardRate>
  	<reverseRate>0.02e-6</reverseRate>
  	<Q10>0.2</Q10>
  </Reaction>

<Reaction name="ISOOut+GluBuf--NULL" id="ISOOut_buf--NULL">
  <Reactant specieID="GluOut" />
  <Reactant specieID="GluBuf" />
  <forwardRate>1e-06</forwardRate>
  <reverseRate>0</reverseRate>
</Reaction>
  
   <!--0b. GluMgluR <==> Desensitized, needed for prolonged DHPG application -->
      <Reaction name = "Glu+MgluR--GluMgluRdesens" id="Glu+MgluR--GluMgluRdesens">
        <Reactant specieID="GluMgluR"              />
        <Product  specieID="GluMgluRdesens"         />

        <forwardRate> 0.0625e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!--1a. Glu or Glu agonist Dhpg: Glu + MgluR <==> GluMgluR
    1st set of rates is for Dhpg, 2nd set of rates for Glu  -->
      <Reaction name = "Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"              />
        <Reactant specieID="MgluR"              />
        <Product  specieID="GluMgluR"         />

        <forwardRate> 0.5e-06 </forwardRate>
        <reverseRate> 6.6e-03      </reverseRate>
	<!-- uncomment below and comment above for Glu (vs Dhpg) -->
        <!--forwardRate> 0.002e-03 </forwardRate>
        <reverseRate> 1e-03      </reverseRate-->
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--2a. Gqabg + GluMgluR    <-> GluMgluRGq    -->
    <Reaction name = "Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"               />
        <Reactant specieID="GluMgluR"             />
        <Product  specieID="GluMgluRGq"            />

        <forwardRate>  0.0015e-03  </forwardRate>
        <reverseRate>   0.68e-03  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

  <!--1b. Gqabg + MgluR <-> MgluRGq -->
  <Reaction name = "Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg" />
        <Reactant specieID="MgluR" />
        <Product specieID="MgluRGq" />

        <forwardRate> 0.75e-06 </forwardRate>
        <reverseRate> 6.8e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <!--2b. Glu + MgluRGq <-> GluMgluRGq -->
   <Reaction name = "Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu" />
        <Reactant specieID="MgluRGq" />
        <Product specieID="GluMgluRGq" />

        <forwardRate> 0.001e-03 </forwardRate>
        <reverseRate> 1e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <!--3. GabgGluMglu    <-> GqaGTP + GluMgluRGqbg -->
    <Reaction name = "GluMgluRGq--GqaGTP+GluMgluRGqbg" id="GluMgluRGq--GqaGTP+GluMgluRGqbg">
        <Reactant specieID="GluMgluRGq"               />
        <Product specieID="GqaGTP"             />
        <Product specieID="GluMgluR"            /> 
 
        <forwardRate>  0.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
  

<!--Add endoplasmic reticulum and IP3R from the never used growth cone model-->
<!-- try out sneyd's model - not appropriate, does not pump, just buffers-->
     <!--https://pubmed.ncbi.nlm.nih.gov/6244305/ -->
     
    <!-- Ca leak -    CaOut + Leak <-> CaOutLeak -->
  <!-- Serca -->
  <Reaction name = "SERCA_1a" id="SERCA_1a">
    <Reactant specieID="Ca" />
    <Reactant specieID="SERCA"/>
    <Product specieID="SERCA_Ca"/>
    
    <forwardRate>2e-3</forwardRate>
    <reverseRate>0.04</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  
    <Reaction name = "SERCA_1b" id="SERCA_1b">
    <Reactant specieID="Ca" />
    <Reactant specieID="SERCA_Ca"/>
    <Product specieID="SERCA_Ca2"/>
    
    <forwardRate>2.5e-7</forwardRate>
    <reverseRate>25e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name = "SERCA_1c" id="SERCA_1c">
    <Reactant specieID="SERCA_Ca2"/>
    <Product specieID="CaER" power="2" />
    <Product specieID="SERCA"/>
    <forwardRate>7.5e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>




 <!-- ER Ca leak -    CaER+ LeakER <-> CaERLeak-->
  <Reaction name = "Ca_leakER" id="Ca_leakaER">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="CaERLeak"/>
    
    <forwardRate>7.e-8</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
    
<!--  ER Ca leak -    CaERLeak <-> Ca + LeakER-->
  <Reaction name = "Ca_leakER" id="Ca_leakbER">
    <Reactant specieID="CaERLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="LeakER"/>
    
    <forwardRate>2.5e-3</forwardRate>
    <reverseRate>0</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <!-- higher affinity lower capacity CRT-Ca binding,
       Baksh and Michalak, J Biol Chem 1991-->
  <Reaction name = "CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-7</forwardRate>
    <reverseRate>0.001</reverseRate>
    </Reaction>

  <Reaction name = "IP3R+IP3" id="IP3R+IP3">
    <Reactant specieID="IP3R"           />
    <Reactant specieID="IP3"              />
    <Product  specieID="IP3RIP3"               />

    <forwardRate> 0.00001   </forwardRate>
    <reverseRate> 0.01       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name = "IP3RIP3+Ca" id="IP3RIP3+Ca">
    <Reactant specieID="IP3RIP3"           />
    <Reactant specieID="Ca"           />
    <Product  specieID="IP3RO"               />
    
    <forwardRate> 0.00008   </forwardRate>
    <reverseRate> .02    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

   <Reaction name = "IP3R+Ca" id="IP3R+Ca">                                                                      
    <Reactant specieID="IP3R"           />                                                                      
    <Reactant specieID="Ca"              />                                                                     
    <Product  specieID="IP3RC"               />                                                                 
                                                                                                                
    <forwardRate> 2.22e-6  </forwardRate>                                                                       
    <reverseRate> 5e-3      </reverseRate>                                                                      
    <Q10>         0.2           </Q10>                                                                          
  </Reaction>                                                                                                   
                                                                                                                
  <!--4. IP3R_Pa <-> IP3R_Pb -->
  <Reaction name = "IP3RC+Ca" id="IP3C+Ca">
  <Reactant specieID="IP3RC"           />
      <Reactant specieID="Ca"              />

    <Product  specieID="IP3RC2"               />

    <forwardRate> 4.44e-6   </forwardRate>
    <reverseRate> 10e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 <Reaction name = "IP3RC2+Ca" id="IP3C2+Ca">
  <Reactant specieID="IP3RC2"           />
      <Reactant specieID="Ca"              />

    <Product  specieID="IP3RC3"               />

    <forwardRate> 6.66e-6   </forwardRate>
    <reverseRate> 15e-3       </reverseRate>
    <Q10>         0.2           </Q10>
    </Reaction>
<Reaction name = "IP3RC3+Ca" id="IP3C3+Ca">
  <Reactant specieID="IP3RC3"           />
      <Reactant specieID="Ca"              />

    <Product  specieID="IP3RC4"               />

    <forwardRate> 8.88e-6   </forwardRate>
    <reverseRate> 20e-3       </reverseRate>
    <Q10>         0.2           </Q10>
    </Reaction>

    <Reaction name = "IP3R_Ob-flux_Ia" id="IP3R_Ob-flux">
    <Reactant specieID="IP3RO"           />
    <Reactant specieID="CaER"           />
    <Product  specieID="Ca"               />
    <Product  specieID="IP3RO"               />

    <forwardRate> 0.000048 </forwardRate>
    <reverseRate>  0.016      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  
</ReactionScheme>
