<?xml version="1.0"?>
<ReactionScheme>

  
  <!-- IP3R Model based on Fraiman D, Dawson SP (2004) A model of IP3 receptor with a luminal
       calcium binding site: stochastic simulations and analysis. Cell
       Calcium 35: 403-413, 2004 -->
  
  <!-- Receptor States:
       IP3R  state
       IP3RO  state
       IP3RIP3  bound IP3R
       IP3RC  bound IP3R
       IP3RC2
       IP3RC3
       IP3RC4
       
  -->
  <!-- you can specify the units of the diffusion constant. If they are not specified they are assumed to be micron^2/second, (microns written "mu" here) it should understand microns, mm, and m for distances and seconds and ms for times -->
  <!-- This code is implemented CaMKII_bimols Rns -0.44, 0.28, 0.088. Fix 3 products 2rxns break down to 2nd order rxn : LbARG/Ip35P1P2 -->
  <!-- last rxn of Ip35p1p2 was wrong reactant:fixed on Aug,8th,2008
   Chosen katp=1 sec(not 10 sec) is enough   -->
  <!-- Suggested by avrama Ca kdiff=600 for helping fast decay on Feb.24th 2009-->

  <!--TODO add bAR desensitization!-->
  <Specie name="Ca" id="Ca" kdiff="174.3" kdiffunit="mu2/s" />
  <Specie name="CaOut" id="CaOut" kdiff="3." kdiffunit="mu2/s" />
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="CaOutOraiSTIM_8" id="CaOutOraiSTIM_8" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="CaOutOraiSTIM_6" id="CaOutOraiSTIM_6" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="CaOutOraiSTIM_4" id="CaOutOraiSTIM_4" kdiff="0"
	  kdiffunit="mu2/s" />
  <Specie name="CaOutOraiSTIM_2" id="CaOutOraiSTIM_2" kdiff="0"
	  kdiffunit="mu2/s" />

  <Specie name="OraiSTIM_8" id="OraiSTIM_8" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="OraiSTIM_6" id="OraiSTIM_6" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="OraiSTIM_4" id="OraiSTIM_4" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="OraiSTIM_2" id="OraiSTIM_2" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="Orai" id="Orai" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="STIM_2" id="STIM_2" kdiff="0.05" kdiffunit="mu2/s" />
  <Specie name="STIM" id="STIM" kdiff="0.1" kdiffunit="mu2/s" />
  <Specie name="STIMCaER" id="STIMCaER" kdiff="0" kdiffunit="mu2/s" />
  
  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s" />
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s" />
  
  <Specie name="pmca" id="pmca" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="pmcaCa" id="pmcaCa" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s" />
 
  <Specie name="CaER" id="CaER" kdiff="0." kdiffunit="mu2/s"/>
  
  <Specie name="CaERLeak" id="CaERLeak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="SERCA" id="SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_Ca" id="SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_Ca2" id="SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_CaER" id="SERCA_CaER" kdiff="0" kdiffunit="mu2/s"/>
  <!--calreticulin-->
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>


  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s" />
  <!-- -->
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s" />
  <!--Calmodulin-->
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s" />
 
  <!-- 2 Ca bound Calmodulin-->
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s" />
  <!-- 4 Ca bound Calmodulin-->
  <!-- -->
  <!--*************************************************************************
  Now, the reactions themselves   SAME means params are same in both files
  **************************************************************************-->
  <!--I. *********** Ca pump and buffer rxns  ************* -->
  <!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
  <Reaction name = "Ca_pump1a" id="Ca_pump1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca"/>
    <Product specieID="pmcaCa"/>

    <forwardRate>0.5e-4</forwardRate>
    <reverseRate>0.007</reverseRate>
  </Reaction>

  <!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
  <Reaction name = "Ca_pump1b" id="Ca_pump1b">
    <Reactant specieID="pmcaCa"/>
    <Product specieID="pmca"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>0.0035</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
  <Reaction name = "Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
  <Reaction name = "Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
  <Reaction name = "Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-8</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name = "Ca_leak_toER" id="Ca_leak_toER">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_8" />
    <Product specieID="CaOutOraiSTIM_8" />
    
    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak_toER2" id="Ca_leak_toER2">
    <Reactant specieID="CaOutOraiSTIM_8" />
    <Product specieID="Ca" />
    <Product specieID="OraiSTIM_8" />
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name = "Ca_leak_toER_comp" id="Ca_leak_toER_comp">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_6" />
    <Product specieID="CaOutOraiSTIM_6" />
    
    <forwardRate>5e-7</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak_toER2_comp" id="Ca_leak_toER2_comp" >
    <Reactant specieID="CaOutOraiSTIM_6" />
    <Product specieID="Ca" />
    <Product specieID="OraiSTIM_6" />
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name = "Ca_leak_toER3" id="Ca_leak_toER3">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_4" />
    <Product specieID="CaOutOraiSTIM_4" />
    
    <forwardRate>3.75e-8</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak_toER4" id="Ca_leak_toER4">
    <Reactant specieID="CaOutOraiSTIM_4" />
    <Product specieID="Ca" />
    <Product specieID="OraiSTIM_4" />
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name = "Ca_leak_toER3_comp" id="Ca_leak_toER3_comp">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_2" />
    <Product specieID="CaOutOraiSTIM_2" />
    
    <forwardRate>1.5e-8</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
  <Reaction name = "Ca_leak_toER4_comp" id="Ca_leak_toER4_comp" >
    <Reactant specieID="CaOutOraiSTIM_2" />
    <Product specieID="Ca" />
    <Product specieID="OraiSTIM_2" />
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  

  <Reaction name = "STIM_dim_1" id="STIM_dim_1">
    <Reactant specieID="STIM" power="2" />
    <Product specieID="STIM_2" />
    <forwardRate>1e-6</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>
  

  <Reaction name = "STIMCaER_1" id="STIMCaER_1">
    <Reactant specieID="STIM" />
    <Reactant specieID="CaER" />
    <Product specieID="STIMCaER"/>
    <forwardRate>4e-3</forwardRate>
    <reverseRate>2e-1</reverseRate>
  </Reaction>

  <Reaction name = "STIM_Orai" id="STIM_Orai">
    <Reactant specieID="STIM_2" />
    <Reactant specieID="Orai" />
    <Product specieID="OraiSTIM_2"/>
    <forwardRate>1.5e-4</forwardRate>
    <reverseRate>8e-4</reverseRate>
  </Reaction>

  <Reaction name = "STIM_Orai2" id="STIM_Orai2">
    <Reactant specieID="OraiSTIM_2" />
    <Reactant specieID="STIM_2" />
    <Product specieID="OraiSTIM_4"/>
    <forwardRate>3e-4</forwardRate>
    <reverseRate>8e-3</reverseRate>
  </Reaction>

  <Reaction name = "STIM_Orai3" id="STIM_Orai3">
    <Reactant specieID="OraiSTIM_4" />
    <Reactant specieID="STIM_2" />
    <Product specieID="OraiSTIM_6"/>
    <forwardRate>6e-5</forwardRate>
    <reverseRate>8e-3</reverseRate>
  </Reaction>

  <Reaction name = "STIM_Orai4" id="STIM_Orai4">
    <Reactant specieID="OraiSTIM_6" />
    <Reactant specieID="STIM_2" />
    <Product specieID="OraiSTIM_8"/>
    <forwardRate>1.2e-5</forwardRate>
    <reverseRate>8e-3</reverseRate>
  </Reaction>

  
  
  <!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
  <Reaction name = "Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
   <!-- fixed immobile buffer-->
<Reaction name = "Ca_fixedbuffer" id="Ca_fixedBuffer">
<Reactant specieID="Ca"/>
<Reactant specieID="fixedbuffer"/>
<Product specieID="fixedbufferCa"/>
<forwardRate>0.004e-1</forwardRate>
<reverseRate>20.0</reverseRate>
<Q10>0.2</Q10>
</Reaction>
  
<!-- CaM, CaMCa4 and PP2B Binding -->
<!--1) CaM  + 2Ca
<-> CaMCa2 -->
<!--This is the C site-->
<Reaction name="CaMC_bind" id="CaMC_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="CaMCa2C" />
  <forwardRate>6e-6</forwardRate>
  <reverseRate>9.1e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--2) CaMCa2  + 2Ca
<-> CaMCa4 -->
<!--This is the N-site-->
<Reaction name="CaMCa2C_bind" id="CaMCa2C_bind">
  <Reactant specieID="CaMCa2C" />
  <Reactant specieID="Ca" n="2" />
  <Product specieID="CaMCa4" />
  <forwardRate>0.1e-3</forwardRate>
  <reverseRate>1000e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!--1B) CaM  + 2Ca <-> CaMCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMN_bind" id="CaMN_bind">
	<Reactant specieID="CaM"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CaMCa2N  + 2Ca <-> CaMCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMCa2N_bind" id="CaMCa2N_bind">
	<Reactant specieID="CaMCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>

<!-- Kubota, Putkey, Waxham, 2007, Biophys J, 92:3848-3859, constants
 k5 and k_5-->
<!--2a) CaM  + Ng
<-> NgCaM -->
<!--I step of the Neurogranin -->
<Reaction name="NgCaM_bind" id="NgCaM_bind">
  <Reactant specieID="CaM" />
  <Reactant specieID="Ng" />
  <Product specieID="NgCaM" />
  <forwardRate>28.e-6</forwardRate>
  <reverseRate>36.e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!--Add endoplasmic reticulum and IP3R from the never used growth cone model-->
<!-- try out sneyd's model - not appropriate, does not pump, just buffers-->
     <!--https://pubmed.ncbi.nlm.nih.gov/6244305/ -->
     
  <!-- Serca -->
  <Reaction name = "SERCA_1a" id="SERCA_1a">
    <Reactant specieID="Ca" />
    <Reactant specieID="SERCA"/>
    <Product specieID="SERCA_Ca"/>
    
    <forwardRate>2e-2</forwardRate>
    <reverseRate>2.8</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


 
  <Reaction name = "SERCA_1b" id="SERCA_1b">
    <Reactant specieID="Ca" />
    <Reactant specieID="SERCA_Ca"/>
    <Product specieID="SERCA_Ca2"/>
        
    <forwardRate>2.5e-4</forwardRate>
    <reverseRate>25e-1</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


 <Reaction name = "SERCA_1c" id="SERCA_1c">
    <Reactant specieID="SERCA_Ca2"/>
    <Product specieID="CaER" />
    <Product specieID="SERCA_CaER"/>
    <forwardRate>0.274</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "SERCA_1d" id="SERCA_1d">
    <Reactant specieID="SERCA_CaER"/>
    <Product specieID="CaER" />
    <Product specieID="SERCA"/>
    <forwardRate>0.274</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>
 <!-- ER Ca leak -    CaER+ LeakER <-> CaERLeak-->
  <Reaction name = "Ca_leakER" id="Ca_leakaER">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="CaERLeak"/>
    
    <forwardRate>7.e-3</forwardRate>
    <reverseRate>11</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
    
<!--  ER Ca leak -    CaERLeak <-> Ca + LeakER-->
  <Reaction name = "Ca_leakER" id="Ca_leakbER">
    <Reactant specieID="CaERLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="LeakER"/>
    
    <forwardRate>2.5e-2</forwardRate>
    <reverseRate>0</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <!-- higher affinity lower capacity CRT-Ca binding,
       Baksh and Michalak, J Biol Chem 1991-->
  <Reaction name = "CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-6</forwardRate>
    <reverseRate>0.01</reverseRate>
    </Reaction>
  
</ReactionScheme>
