<?xml version="1.0"?>
<ReactionScheme>

  
 
  <!--TODO add bAR desensitization!-->
  <Specie name="Ca" id="Ca" kdiff="174.3" kdiffunit="mu2/s" />
  <Specie name="CaOut" id="CaOut" kdiff="174." kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="0." kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA_Ca2" id="ER_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA_Ca" id="ER_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA" id="ER_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <!--calreticulin-->
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="STIM_2" id="STIM_2" kdiff="0.05" kdiffunit="mu2/s" />
  <Specie name="STIM" id="STIM" kdiff="0.1" kdiffunit="mu2/s" />
  <Specie name="STIMCaER" id="STIMCaER" kdiff="0" kdiffunit="mu2/s" />

  <Specie name="OraiSTIM_8" id="OraiSTIM_8" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="OraiSTIM_6" id="OraiSTIM_6" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="OraiSTIM_4" id="OraiSTIM_4" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="OraiSTIM_2" id="OraiSTIM_2" kdiff="0" kdiffunit="mu2/s" />
  <Specie name="Orai" id="Orai" kdiff="0" kdiffunit="mu2/s" />

  <!--*************************************************************************
  Now, the reactions themselves   SAME means params are same in both files
  **************************************************************************-->
       <!-- Serca - modified from Griffiths 2006  and Bartol 2015 to account 
       for higher affinity of SERCA2b for Ca, k_2 (rev rate of Cyt_SERCA_1c)
       adjusted as well-->
  <Reaction name = "Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca" />
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>8e-4</forwardRate>
    <reverseRate>83.7e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


 
  <Reaction name = "Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca" />
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>8e-4</forwardRate>
    <reverseRate>167.4e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1c" id="Cyt_SERCA_1c">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="ER_SERCA_Ca2"/>
    <forwardRate>0.6e-3</forwardRate>
    <reverseRate>34e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="ER_SERCA_Ca2"/>
    <Product specieID="CaER" />
    <Product specieID="ER_SERCA_Ca"/>
    <forwardRate>60.04e-3</forwardRate>
    <reverseRate>1e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

   <Reaction name = "Cyt_SERCA_1e" id="Cyt_SERCA_1e">
    <Reactant specieID="ER_SERCA_Ca"/>
    <Product specieID="CaER" />
    <Product specieID="ER_SERCA"/>
    <forwardRate>30.02e-3</forwardRate>
    <reverseRate>2e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1f" id="Cyt_SERCA_1f">
    <Reactant specieID="ER_SERCA"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>0.4e-3</forwardRate>
    <reverseRate>1.2e-6</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  
<!-- Neymotin et al. 2015 Ca wave rescaled -->
 <!-- ER Ca leak -    CaER+ LeakER <-> CaERLeak-->
  <Reaction name = "Ca_leakER" id="Ca_leakaER">
    <Reactant specieID="CaER" p="2"/>
    <Product specieID="Ca" p="2"/>
    
    <forwardRate>1.8e-6</forwardRate>
    <reverseRate>1.8e-6</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
    
  <!-- higher affinity lower capacity CRT-Ca binding,
       Baksh and Michalak, J Biol Chem 1991-->
  <Reaction name = "CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-6</forwardRate>
    <reverseRate>0.01</reverseRate>
    </Reaction>

 <Reaction name = "Ca_leak_toER" id="Ca_leak_toER">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_8" />
    <Product specieID="OraiSTIM_8" />
    <Product specieID="Ca" />
    
    <forwardRate>1.5e-7</forwardRate>
    <reverseRate>1.5e-7</reverseRate>
  </Reaction>
 <Reaction name = "Ca_leak_toER_comp" id="Ca_leak_toER_comp">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_6" />
    <Product specieID="OraiSTIM_6" />
    <Product specieID="Ca" />
    <forwardRate>1e-8</forwardRate>
    <reverseRate>1e-8</reverseRate>
  </Reaction>

   <Reaction name = "Ca_leak_toER_comp2" id="Ca_leak_toER_comp2">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_4" />
    <Product specieID="OraiSTIM_4" />
    <Product specieID="Ca" />
    <forwardRate>1e-9</forwardRate>
    <reverseRate>1e-9</reverseRate>
  </Reaction>
  

 <Reaction name = "Ca_leak_toER_comp" id="Ca_leak_toER_comp">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_6" />
    <Product specieID="OraiSTIM_6" />
    <Product specieID="Ca" />
    <forwardRate>1e-8</forwardRate>
    <reverseRate>1e-8</reverseRate>
  </Reaction>

   <Reaction name = "Ca_leak_toER_comp2" id="Ca_leak_toER_comp2">
    <Reactant specieID="CaOut" />
    <Reactant specieID="OraiSTIM_4" />
    <Product specieID="OraiSTIM_4" />
    <Product specieID="Ca" />
    <forwardRate>1e-9</forwardRate>
    <reverseRate>1e-9</reverseRate>
   </Reaction>

   <Reaction name = "STIM_dim_1" id="STIM_dim_1">
    <Reactant specieID="STIM" power="2" />
    <Product specieID="STIM_2" />
    <forwardRate>1e-5</forwardRate>
    <reverseRate>1.5e-1</reverseRate>
 </Reaction>
 
 <Reaction name = "STIMCaER_1" id="STIMCaER_1">
    <Reactant specieID="STIM" />
    <Reactant specieID="CaER" />
    <Product specieID="STIMCaER"/>
    <forwardRate>4e-8</forwardRate>
    <reverseRate>2e-4</reverseRate>
  </Reaction>

  <Reaction name = "STIM_Orai" id="STIM_Orai">
    <Reactant specieID="STIM_2" />
    <Reactant specieID="Orai" />
    <Product specieID="OraiSTIM_2"/>
    <forwardRate>7.5e-4</forwardRate>
    <reverseRate>8e-4</reverseRate>
  </Reaction>

  <Reaction name = "STIM_Orai2" id="STIM_Orai2">
    <Reactant specieID="OraiSTIM_2" />
    <Reactant specieID="STIM_2" />
    <Product specieID="OraiSTIM_4"/>
    <forwardRate>15e-5</forwardRate>
    <reverseRate>8e-4</reverseRate>
  </Reaction>

  <Reaction name = "STIM_Orai3" id="STIM_Orai3">
    <Reactant specieID="OraiSTIM_4" />
    <Reactant specieID="STIM_2" />
    <Product specieID="OraiSTIM_6"/>
    <forwardRate>30e-6</forwardRate>
    <reverseRate>8e-4</reverseRate>
  </Reaction>

  <Reaction name = "STIM_Orai4" id="STIM_Orai4">
    <Reactant specieID="OraiSTIM_6" />
    <Reactant specieID="STIM_2" />
    <Product specieID="OraiSTIM_8"/>
    <forwardRate>6e-6</forwardRate>
    <reverseRate>8e-4</reverseRate>
  </Reaction>



 </ReactionScheme>
